PsychoPy2experiment version="2021.2.3"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=C1CFNI34
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Incomplete URL = https://app.prolific.co/submissions/complete?cc=CQV9NILJ
  Monitor = testMonitor
  Resources = ['conditions/conditions_108.xlsx', 'conditions/conditions_109.xlsx', 'conditions/conditions_110.xlsx', 'conditions/conditions_111.xlsx', 'conditions/conditions_112.xlsx', 'conditions/conditions_113.xlsx', 'conditions/conditions_114.xlsx', 'conditions/conditions_115.xlsx', 'conditions/conditions_116.xlsx', 'conditions/conditions_117.xlsx', 'conditions/conditions_118.xlsx', 'conditions/conditions_119.xlsx', 'conditions/conditions_ltm_108.xlsx', 'conditions/conditions_ltm_109.xlsx', 'conditions/conditions_ltm_110.xlsx', 'conditions/conditions_ltm_111.xlsx', 'conditions/conditions_ltm_112.xlsx', 'conditions/conditions_ltm_113.xlsx', 'conditions/conditions_ltm_114.xlsx', 'conditions/conditions_ltm_115.xlsx', 'conditions/conditions_ltm_116.xlsx', 'conditions/conditions_ltm_117.xlsx', 'conditions/conditions_ltm_118.xlsx', 'conditions/conditions_ltm_119.xlsx', 'conditions/conditions_102.xlsx', 'conditions/conditions_103.xlsx', 'conditions/conditions_107.xlsx', 'conditions/conditions_ltm_102.xlsx', 'conditions/conditions_ltm_103.xlsx', 'conditions/conditions_ltm_107.xlsx', 'conditions/training.xlsx', 'conditions/conditions_87.xlsx', 'conditions/conditions_89.xlsx', 'conditions/conditions_93.xlsx', 'conditions/conditions_96.xlsx', 'conditions/conditions_97.xlsx', 'conditions/conditions_98.xlsx', 'conditions/conditions_99.xlsx', 'conditions/conditions_ltm_87.xlsx', 'conditions/conditions_ltm_93.xlsx', 'conditions/conditions_ltm_96.xlsx', 'conditions/conditions_ltm_97.xlsx', 'conditions/conditions_ltm_98.xlsx', 'conditions/conditions_ltm_99.xlsx', 'stim/respond_faster.png', 'stimuli/accordion02.png', 'stimuli/acorn.png', 'stimuli/acousticguitar02.png', 'stimuli/adjustablewrench02a.png', 'stimuli/africanelephant.png', 'stimuli/aloe01.png', 'stimuli/antlers.png', 'stimuli/apron.png', 'stimuli/armadillo.png', 'stimuli/backpack01a.png', 'stimuli/badmintonracket.png', 'stimuli/barbecue02.png', 'stimuli/barnowl.png', 'stimuli/bassethound.png', 'stimuli/bicycle.png', 'stimuli/blender.png', 'stimuli/bluejay.png', 'stimuli/boot01.png', 'stimuli/boxingglove01.png', 'stimuli/bulldozer.png', 'stimuli/buoy.png', 'stimuli/candelabra.png', 'stimuli/cat.png', 'stimuli/cellphone.png', 'stimuli/chameleon.png', 'stimuli/chessknight03b.png', 'stimuli/chipmunk.png', 'stimuli/chisel01b.png', 'stimuli/clownfish.png', 'stimuli/comb02b.png', 'stimuli/corkscrew03a.png', 'stimuli/cornet.png', 'stimuli/cupcake.png', 'stimuli/desktopcomputer.png', 'stimuli/dragonfly01.png', 'stimuli/dromedary.png', 'stimuli/duck01.png', 'stimuli/fireextinguisher02.png', 'stimuli/flamingo.png', 'stimuli/flipflop01a.png', 'stimuli/fryingpan01.png', 'stimuli/gardengnome01.png', 'stimuli/gecko.png', 'stimuli/globe.png', 'stimuli/gorilla.png', 'stimuli/graduationcap.png', 'stimuli/greatwhiteshark.png', 'stimuli/greywolf.png', 'stimuli/handbrush02.png', 'stimuli/handfan01b.png', 'stimuli/hat04a.png', 'stimuli/hen.png', 'stimuli/honeybee.png', 'stimuli/jeep.png', 'stimuli/lightbulb01.png', 'stimuli/lock02a.png', 'stimuli/loppingshears.png', 'stimuli/lynx01.png', 'stimuli/mailbox02.png', 'stimuli/makeupbrush04.png', 'stimuli/maraca02a.png', 'stimuli/megaphone.png', 'stimuli/microscope.png', 'stimuli/monument.png', 'stimuli/motorcycle.png', 'stimuli/motoroilbottle04.png', 'stimuli/nail.png', 'stimuli/needlenosepliers03b.png', 'stimuli/nyala.png', 'stimuli/officechair02.png', 'stimuli/outdoorheater.png', 'stimuli/paintroller02.png', 'stimuli/parrot01.png', 'stimuli/peacock.png', 'stimuli/pear01.png', 'stimuli/penguin.png', 'stimuli/photocopier.png', 'stimuli/pintofbeer.png', 'stimuli/pipewrench.png', 'stimuli/pitcher02a.png', 'stimuli/pumpkin.png', 'stimuli/pylon01.png', 'stimuli/quartz.png', 'stimuli/radio03a.png', 'stimuli/razor04a.png', 'stimuli/redfox.png', 'stimuli/rhinoceros02.png', 'stimuli/rollerblade.png', 'stimuli/sailboat.png', 'stimuli/saintbernard.png', 'stimuli/saw02b.png', 'stimuli/scissors02a.png', 'stimuli/scrubbingbrush05a.png', 'stimuli/shoppingcart.png', 'stimuli/snowglobe.png', 'stimuli/soapdispenser03b.png', 'stimuli/stackingring01b.png', 'stimuli/stapler03b.png', 'stimuli/tabascosauce.png', 'stimuli/thumbtack02b.png', 'stimuli/toad.png', 'stimuli/toyhockeystick02a.png', 'stimuli/toytractor02a.png', 'stimuli/travelmug.png', 'stimuli/tree.png', 'stimuli/watercooler.png', 'stimuli/wateringcan.png', 'stimuli/wheelbarrow01.png', 'stimuli/white.png', 'stimuli/windshieldwasherfluid.png', 'stimuli/windsurfboard.png', 'stimuli/witchhat.png', 'stimuli/zebra.png', 'conditions/instrcutions/instru_6.png', 'conditions/instrcutions/instru_4.png', 'conditions/instrcutions/instru_5.png', 'conditions/conditions_3.xlsx', 'conditions/conditions_ltm_3.xlsx', 'stim/basketballhoop02.png', 'stim/bottleofredwine02.png', 'stim/bowlingpin.png', 'stim/christmastree.png', 'stim/dishsoap.png', 'stim/dreamcatcher.png', 'stim/floorlamp.png', 'stim/frenchfries.png', 'stim/leaf04.png', 'stim/noparkingsign.png', 'stim/parkbench03.png', 'stim/toynutcracker.png', 'conditions/instrcutions/instru_3.png', 'stim/keys_right.png', 'stim/keys.png', 'stim/left_arrow.png', 'stim/pic_redirection_prolific.png', 'stim/repond_faster.png', 'stim/respond_faster.png', 'stim/white.png', 'stim/arrows.png', 'stim/coverImage.png', 'stim/crown.png', 'stim/eiffeltower.png', 'stim/keys copy.png', 'conditions/instrcutions/instru_1.png', 'conditions/instrcutions/instru_2.png', 'conditions/instrcutions/instru_7.png', 'conditions/instrcutions/instru_8.png', 'conditions/instrcutions/instru_9.png', 'conditions/instrcutions/instru_10.png', 'conditions/attentionChecks.xlsx', 'conditions/correct_adjustment.xlsx', 'conditions/distractorTask.xlsx', 'conditions/instructions_1.xlsx']
  Screen = 1
  Units = height
  Window size (pixels) = [1728, 1117]
  color = $[1,1,1]
  expName = RIDER3
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Routines
  Routine trial
  Routine Start
    CodeComponent initializeJS
      Code Type = JS
      Before JS Experiment:
        function makeArr(startValue, stopValue, cardinality) {
          var arr = [];
          var step = (stopValue - startValue) / (cardinality - 1);
          for (var i = 0; i < cardinality; i++) {
            arr.push(startValue + (step * i));
          }
          return arr;
        }
      Begin JS Experiment:
        thisExp = psychoJS.experiment;

        Array.prototype.append = [].push;
        shuffle = util.shuffle;
        average = (arr) => (arr.reduce((a, b) => (a + b), 0)) / arr.length;
    MouseComponent startMouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
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  Routine instructions
    CodeComponent imagesInstru
      Code Type = Auto->JS
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      Begin Experiment:
        img_no = 1

        current_img = 'conditions/instrcutions/instru_' + str(img_no) + '.png'
      Begin Routine:
        current_img = 'conditions/instrcutions/instru_' + str(img_no) + '.png'
      End Routine:
        # if the participant pressed the left key, decrease the image
        # number by one (e. g. going from "image 2" to "image 1"),
        # and if they pressed the right key, increase the image number
        # by one ("image 2" -> "image 3")
        if (img_no > 1) and ((instru_keys.keys == str('left')) or (instru_keys.keys == 'left')):
            img_no -= 1
        elif (img_no < 10) and ((instru_keys.keys == str('right')) or (instru_keys.keys == 'right')):
            img_no += 1
        elif (img_no == 9) and ((instru_keys.keys == 'space') or (instru_keys.keys == str('space'))):
            instructionsLoop.finished = True
            trials.finished = True
        current_img = 'conditions/instrcutions/instru_' + str(img_no) + '.png'
    CodeComponent instructions_2
      Code Type = Auto->JS
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      Begin Experiment:
        instrDict = {
            "1": "Welcome to this experiment!\nIf you exit fullscreen mode during the experiment you will be redirected to Prolific and cannot continue with the experiment.\nTo continue, please press the right arrow key on your keyboard.",
            "2": "During this experiment, we will test your short-term memory for object orientations.\n\nIn the following, we will explain how the task works.\n\nYou can navigate back and forth through the instructions by using the arrow keys.",
            "3": "We will always present two consecutive object images, which are rotated in some way.\n\nYou will be asked to remember the objects' orientation.\nThen we show a cue that tells you which object we are likely going to test you on. In the test we ask you to recall one of the objects orientation.\n\nIt always goes like this: We are showing you a first object and then a second, and you should keep each object and its orientation in memory.\nThen you see a cue ( \"1\" or \"2\" ) and a few seconds later, in the recall test, we ask you to recall the orientation of one of the objects. Let's have a detailed look at how the task goes on the following slides:",
            "4": "About the cue: After having seen the two objects you will see a hint in form of a cue (either a \"1\" or \"2\"). This cue will indicate which orientation we are most likely going to ask about. It can be a \"1\" for the first object or \"2\" for the second object we showed you. In most trials this cue will correctly tell you which object orientation you need to recall in the following test. In the example below the cue tells you correctly to recall object number \"1\", the crown. So, you will then be tested on the crown.",
            "5": "However, in a few trials the cue is not valid. In the example below the cue guides you that we are going to ask about the Eiffel Tower (\"2\"), however then the crown (\"1\") is tested.\nYou can therefore use the cue as a guide on which object to focus on, just be aware that there is a chance it might not be correct in a few cases which means you should to some extend keep both objects in memory.",
            "6": "Let's now have a look at how you can give your answer.\nSimple: at recall (test), we will show you the object in question in an orientation that is different from the one you remembered, and you will be asked to use the arrow keys on your keyboard to rotate the object to its original orientation. You can use the arrow keys to continuously rotate the object back and forth until you are happy with your answer.",
            "7": "Pressing the left arrow key will rotate the object to the left. Pressing the right arrow key will rotate the object to the right.\n\nYour answer can be logged by using the space bar on your keyboard, and the task continues.",
            "8": "Throughout the experiment, please try to respond both quickly and accurately. If you do not answer within a certain period of time, you will see the instruction 'please respond faster' on the screen, which indicates that you did not respond in time.\n\n At the end of the experiment, we will randomly select 10 of your responses. If your answers were mostly accurate, you will receive a bonus payment.\n\nIf you encounter any technical difficulties during the task, do not restart it, but rather return to Prolific.\n\nIf you exit fullscreen mode during the experiment you will be redirected to Prolific and cannot continue with the experiment!\n\nIn the following, you can practice how to answer by pressing the right and left arrow keys to rotate the object back to its original orientation.\n\n\n\n[Please press the right arrow when you're ready]",
            "9": "[Please press the right arrow when you have understood the instructions]",
           "10": "[Please press the right arrow when you're ready]",
        }
        currentInstr = "1"
      End Routine:
        print(instru_keys.keys)

        if instru_keys.keys == "left":
            currentInstr = int(currentInstr) - 1
        elif instru_keys.keys == "right":
            currentInstr = int(currentInstr) + 1

        if currentInstr == 0:
            currentInstr = 1  # can't go lower than
        elif currentInstr == 9:
            instrLoop.finished=True

        currentInstr = str(currentInstr)
    TextComponent instruction
      color = black
      letterHeight = 0.02
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instrDict[currentInstr]
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    ImageComponent instrupic
      image [set every repeat] = $current_img
      pos = (0, -210)
      size = (900, 506)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent instru_keys
      allowedKeys = 'right','space','left'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent codeJScomponent_2
      Code Type = Auto->JS
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  Routine adjustOr_instru
    TextComponent adjusting_header
      color = black
      letterHeight = 0.02
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
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      text:
        Before we start with some practice trials, you can try out rotating the object with the right and left arrow keys on your keyboard. Go ahead and try!

        In the experiment, you can always submit your answer using the space bar.

        [press space bar to continue]
    KeyboardComponent log_response_instru
      allowedKeys [set every repeat] = 'right','left'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent adjust_practice
      Code Type = Both
      Begin Experiment:
        orientation = 0
      Begin JS Experiment:
        orientation = 0;
      Begin JS Routine:
        orientation = 0;
        keySpeed = 1;
        increasePerFrame = 0.1;
      Begin Routine:
        #adjust_stim_8.setAutoDraw(False)
        #kb = keyboard.Keyboard()

        orientation = 0
        keySpeed = 1
        increasePerFrame = 0.1

        #set the adjusmtent stimulus
      Each Frame:
        keys = adjust_keys_intru.getKeys(waitRelease=False, clear = False)
        if len(keys)>0:
            key = keys[len(keys)-1] #get recent key press
            if not key.duration:
                keySpeed += increasePerFrame #This is like acceleration speed so you could think of making some non-linear function
                if keySpeed > 10:
                    keySpeed = 1
                if key.name == "left":
                    orientation += keySpeed
                if key.name == "right":
                    orientation -= keySpeed
            else: # Meaning PressedKey was released
                keySpeed = 1
      Each JS Frame:
        keys = adjust_keys_intru.getKeys({"waitRelease": false, "clear": false});
        if ((keys.length > 0)) {
            key = keys[(keys.length - 1)];
            if ((! key.duration)) {
                keySpeed += increasePerFrame;
                if ((keySpeed > 10)) {
                    keySpeed = 0.5;
                }
                if ((key.name === "left")) {
                    orientation += keySpeed;
                }
                if ((key.name === "right")) {
                    orientation -= keySpeed;
                }
            } else {
                keySpeed = 0.5;
            }
        }
    ImageComponent adjust_stim_instru
      image = stim/eiffeltower.png
      ori [set every frame] = orientation
      size = (300, 300)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent arrow_1
      image = stim/keys.png
      pos = (0, 220)
      size = (1000, 563)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent adjust_keys_intru
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent submit_instru
      color = red
      letterHeight = 0.02
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = Click space to submit your answer
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    ImageComponent cover_image_instru
      image = stim/coverImage.png
      size = (350, 350)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.2
      units = pix
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  Routine start_practice
    TextComponent practice
      color = black
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        Now let’s practice a couple of example trials of  the actual task!

        Don't worry about making mistakes, just try to get a good grip on the task.

        [Press the space bar when you’re ready to start]
    KeyboardComponent practiceStart
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine loop_control
    CodeComponent LoopContr_2
      Code Type = Both
      Begin Experiment:
        # Counter for the blocks
        thisBlock = 0


        # variable to determine conditions file
        main_task_blocks = (("conditions/conditions_" + str(expInfo["participant"])) + ".xlsx")

        # counter variable for accuracy bonus at the end
        bonus_accuracies = []
      Begin JS Experiment:
        thisBlock = 0;
        //variable to determine conditions file
        input = await fetch("https://920-rider-3-142.exp.arc.mpib.org/api/inputs/by-group/ids").then(r => r.json());
        id = input.id;
        //id = 4;
        psychoJS.experiment.addData("participant_id",id);
        main_task_blocks = (("conditions/conditions_" + id.toString()) + ".xlsx");
      Begin JS Routine:
        thisBlock += 1;

        // Manually insert which rows have to be taken depending on the block number
        // This cannot be automated due to constraints in row selection for every iteration of the loop
        //the first block are the practice trials and the following blocks are the experiment blocks
         if ((thisBlock === 1)) {
            MyIndicesMain = "0:6";
        } else {
            if ((thisBlock === 2)) {
                MyIndicesMain = "6:20";
            } else {
                if ((thisBlock === 3)) {
                    MyIndicesMain = "20:40";
                } else {
                    if ((thisBlock === 4)) {
                        MyIndicesMain = "40:56";
                    }
                }
            }
        }
        //After block 1 we start the testing (experiment)
        if ((thisBlock === 1)) {
            testing_start = 1;
        } else {
            testing_start = 0;
        }

        //After block 2 we do the attention checks

        if ((thisBlock === 2)) {
            repsAC = 1;
            numberACresults = 1;
        } else {
            repsAC = 0;
            numberACresults = 0;
        }
        //After block 3 we do a break
        if ((thisBlock === 3)) {
            break_routine = 1;
        } else {
            break_routine = 0;
        }

        trials.addData("WM_condition_file", main_task_blocks);
      Begin Routine:
        # First time we enter the loop, we are in block 1
        thisBlock +=1

        # A slice between two specific rows - trials for the block
        #myIndices = slice(startItem, endItem+1)
        # the first block are the practice trials and the following blocks are the experiment blocks
        bonus_accuracies = []
        if thisBlock == 1:
            MyIndicesMain = "0:6"
        elif thisBlock == 2:
            MyIndicesMain = "6:20"
        elif thisBlock == 3:
            MyIndicesMain = "20:40"
        elif thisBlock == 4:
            MyIndicesMain = "40:56"

        # After block 1 we start the testing (experiment)
        if thisBlock == 1:
            testing_start = 1
        else:
            testing_start = 0



        # After block 2 we do the attention checks
        if thisBlock == 2:
            repsAC = 1
            numberACresults = 1
        else:
            repsAC = 0
            numberACresults = 0


        # After block 3 we have a small break
        if thisBlock == 3:
            break_routine = 1
        else:
            break_routine = 0
  Routine trialCounter
    CodeComponent trial_counterWM
      Code Type = Both
      Begin Experiment:
        # Counter for the trials
        ntrial = 0
        trialReal = []
      Begin JS Experiment:
        ntrial = 0;
        trialReal = [];
      Begin JS Routine:
        ntrial += 1;
        trialReal = ntrial;
        trials.addData("trialNumber", trialReal);
      Begin Routine:
        # Counter for which trial we are in right now
        ntrial += 1
        trialReal = ntrial
        trials.addData('trialNumber', trialReal)
        #mainStart = core.monotonicClock.getTime()
      End JS Routine:
        if ((ntrial === 15)) {
            attentionCheck = 1;
        } else {
            attentionCheck = 0;
        }
      End Routine:
        # Use ntrial to determine attention checks after half of the trials
        if ntrial == 15:
           attentionCheck = 1
        else:
            attentionCheck = 0
    PolygonComponent polygon
      fillColor = grey
      lineColor = grey
      shape = cross
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2
      units = pix
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  Routine presentation_stims
    ImageComponent Stim1
      image [set every repeat] = $image1
      ori [set every repeat] = startOri1
      size = (300, 300)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1.5
      units = pix
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    TextComponent fixationCross
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 1.5
      stopVal [time (s)] = 2.5
      text [set every repeat] = +
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    ImageComponent Stim2
      image [set every repeat] = $image2
      ori [set every repeat] = startOri2
      size = (300, 300)
      startVal [time (s)] = 2.5
      stopVal [time (s)] = 4
      units = pix
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    TextComponent delay_1
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 4
      stopVal [duration (s)] = 0.5
      text = +
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  Routine adjustOr_t1
    CodeComponent trial_counterWM_2
      Code Type = Both
      Begin Experiment:
        # Counter for the trials
        ntrial_WM = -1
        trialReal_WM = []
      Begin JS Experiment:
        ntrial_WM = -1;//to let it start with 0 in first trial
        trialReal_WM = [];
      Begin JS Routine:
        ntrial_WM += 1;
        trialReal_WM = ntrial_WM ;
        trials.addData("trialNumber_WM", trialReal_WM);
      Begin Routine:
        # Counter for which trial we are in right now
        ntrial_WM += 1
        trialReal_WM = ntrial_WM
        trials.addData('trialNumber_WM', trialReal_WM)
        #mainStart = core.monotonicClock.getTime()
    CodeComponent adjustCode_t1
      Code Type = Both
      Begin Experiment:
        # Counter for the bonus
        ori_list = []
      Begin JS Experiment:
        ori_list = [];
      Begin JS Routine:
        kb = new core.Keyboard({psychoJS: psychoJS, clock: new util.Clock(), waitForStart: true});

        fixedOri_t1 = startOri1;
        test1_trial = 1;
        //rotation parameters
        keySpeed = 0.5;
        increasePerFrame = 0.25;
        //set the adjusmtent stimulus
        //minimalDistance_t1 = 12.5;
        //maxOri_t1 = 347.5;
        var oriRange = [11.25, 33.75, 56.25, 78.75, 101.25, 123.75, 146.25, 168.75, 191.25, 213.75, 236.25, 258.75, 281.25, 303.75, 326.25, 348.75];
        util.shuffle(oriRange);
        start_distance_t1 = oriRange[0];
        //currentDistance_t1 = start_distance_t1;


        this_ori_t1 = start_distance_t1;

        trials.addData("start_distance_t1", start_distance_t1);
        trials.addData("test1_trial", test1_trial);
      Begin Routine:
        kb = keyboard.Keyboard()
        kb.clock.reset()

        #  set starting val
        #set the fixed orientation to be randomly left or right
        fixedOri = startOri1
        test1_trial = 1
        keySpeed = 1
        increasePerFrame = 0.2

        #set the adjusmtent stimulus
        minimalDistance = 12.5 # minimal distance to fixedOri
        maxOri = 347.5 # (360-12.5)
        oriRange = np.linspace(minimalDistance, maxOri, 16) #create array of possible 16 orientations
        shuffle(oriRange)
        start_distance = oriRange[0]

        if (startOri1 > start_distance) and (startOri1 < start_distance):
           this_ori = start_distance
        elif (startOri1 == start_distance):
           this_ori = start_distance + 45


        #this_ori = fixedOri+start_distance # "this_ori" determines the orientation the object is shown in at the beginning of the test. The shown rotation will at least be 12.5 degrees different from the memorized orientation (fixed orientation)
        adjustment_startOri = this_ori

        # save information
        trials.addData('adjustment_startOri', adjustment_startOri)
        trials.addData('start_distance', start_distance)
        trials.addData('fixedOri', fixedOri)
        trials.addData('minimalDistance', minimalDistance)
        trials.addData('maxOri', maxOri)
      Each Frame:
        keys = adjust_keys_t1.getKeys(waitRelease=False, clear = False)
        if len(keys)>0:
            key = keys[len(keys)-1] #get recent key press
            if not key.duration:
                keySpeed += increasePerFrame #This is like acceleration speed so you could think of making some non-linear function
                if keySpeed > 10:
                    keySpeed = 1
                if key.name == "left":
                    this_ori += keySpeed
                if key.name == "right":
                    this_ori -= keySpeed
            else: # Meaning PressedKey was released
                keySpeed = 1

        # if the grating is rotated past 360 reset to start ori
        if abs(this_ori-adjustment_startOri)>=360:
            this_ori = adjustment_startOri
        elif abs(this_ori-adjustment_startOri)<=-360:
            this_ori = adjustment_startOri
      Each JS Frame:
        keys = adjust_keys_t1.getKeys({"waitRelease": false, "clear": false});
        if ((keys.length > 0)) {
            key = keys[(keys.length - 1)];
            if ((! key.duration)) {
                keySpeed += increasePerFrame;
                if ((keySpeed > 10)) {
                    keySpeed = 0.5;
                }
                if ((key.name === "left")) {
                    this_ori_t1 += keySpeed;
                }
                if ((key.name === "right")) {
                    this_ori_t1 -= keySpeed;
                }
            } else {
                keySpeed = 0.5;
            }
        }


        if ((Math.abs((this_ori_t1 - start_distance_t1)) >= 360)) {
            this_ori_t1 = start_distance_t1;
        } else {
            if ((Math.abs((this_ori_t1 - start_distance_t1)) <= (- 360))) {
                this_ori_t1 = start_distance_t1;
            }
        }
      End JS Routine:
        trials.addData("this_ori_t1", this_ori_t1);
        accuracy_test1 = Math.min(Math.abs((this_ori_t1 - fixedOri_t1)), Math.abs((abs((this_ori_t1 - fixedOri_t1)) - 360)));
        trials.addData("accuracy_test1 ", accuracy_test1);
        trials.addData("trial_type", trial_type);
        ori_list.append(accuracy_test1);
      End Routine:
        # save the final orientation state and accuracy (closeness to actual ori)
        trials.addData('this_ori', this_ori)
        accuracy = min(abs(this_ori-fixedOri), abs(abs(this_ori-fixedOri)-360))
        trials.addData('accuracy', accuracy)
        ori_list.append(accuracy)
    KeyboardComponent log_response_t1
      allowedKeys [set every repeat] = 'right','left'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    ImageComponent adjust_stim
      image [set every repeat] = $test1
      ori [set every frame] = this_ori_t1
      size = (300, 300)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent arrow_2
      image = stim/keys.png
      pos = (0, 230)
      size = (1000, 563)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent adjust_keys_t1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent submit_t1
      color = grey
      letterHeight = 0.02
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = Click space to submit your answer
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    ImageComponent coverimage_t1
      image = stim/coverImage.png
      size = (350, 350)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.2
      units = pix
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    CodeComponent arrow_keys
      Code Type = Auto->JS
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      Begin Experiment:
        #set size of images

        #imgChoice1="stim/keys.png"

        imgChoice1 = "stim/keys.png"
      Begin Routine:
        startTime_t1 = globalClock.getTime()
      Each Frame:
        #decrease size with left button
        #if event.getKeys(['left']):
            #imgChoice1="stim/left_arrow.png"

        #increase size with right button
        #if event.getKeys(['right']):
            #imgChoice1="stim/keys_right.png"

        if globalClock.getTime() - startTime_t1 >= 15.15:
            continueRoutine = False
            timeout = "1"
            imgChoice1="stim/respond_faster.png"
        else: # Meaning PressedKey was released
            timeout  = "0"

        #if key.name == "left":
             #imgChoice1="stim/left_arrow.png"
        #if key.name == "right":
             #imgChoice1="stim/keys_right.png"


        trials_2.addData('imgChoice1', imgChoice1)
        trials_2.addData('timeout', timeout)
  Routine testing
    TextComponent text_5
      color = black
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        Well done!

        We will now start with the experiment. You will be able to take a short break after finishing 50 % of the trials.

        Remember, you can earn a bonus for answering correctly.

        [Press the space bar when you’re ready to start]
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine BREAK
    TextComponent breakText
      color = black
      letterHeight = 0.02
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 120
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      text:
        Now you can take a short break (2 minutes max.).

        [Press the space bar when you’re ready to continue]
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine attentionCheck
    CodeComponent run_check
      Code Type = Both
      Begin Experiment:
        AC_acc = []
        hits_in_attention2 = 0
      Begin JS Experiment:
        AC_acc = [];
        hits_in_attention2 = 0;
      End JS Routine:
        if (key_respAC_prac.corr) {
            AC_acc = 1;
            hits_in_attention2 += 1;
        } else {
            AC_acc = 0;
        }
        psychoJS.experiment.addData("AC_acc", AC_acc);
      End Routine:
        if key_respAC_prac.corr:
            AC_acc = 1
            hits_in_attention2 += 1
        else:
            AC_acc = 0

        thisExp.addData('AC_acc', AC_acc)
    KeyboardComponent key_respAC_prac
      allowedKeys = 'up','down','left','right'
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      store = first key
      storeCorrect = True
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    TextComponent Pos1_prac
      color = black
      letterHeight = 0.03
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $Loc1
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    TextComponent Pos2_prac
      color = black
      letterHeight = 0.03
      pos = (0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $Loc2
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    TextComponent Pos3_prac
      color = black
      letterHeight = 0.03
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $Loc3
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    TextComponent Pos4_prac
      color = black
      letterHeight = 0.03
      pos = (-0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $Loc4
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    TextComponent taskAC_prac
      color = black
      letterHeight = 0.03
      pos = (0, 0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Use arrow keys to pick the number shown in the center
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    TextComponent ac_stim_prac
      color = red
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $Stim
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  Routine continueOrEnd
    CodeComponent code_7
      Code Type = Both
      Begin Experiment:
        numberQuits2 = 0
        msgEndExperiment = 'text after attention checks'
      Begin JS Experiment:
        numberQuits2 = 0;
        msgEndExperiment = "text after attention checks";
      Begin JS Routine:
        check_AC_acc_2 = (Number.parseFloat(hits_in_attention2) / 8.0);
        if ((check_AC_acc_2 < 0.5)) {
            msgEndExperiment = "Your accuracy in the attention checks was too low. \n\n\nYou have reached the end of the experiment. \nPress the space to quit the experiment. Thank you!";
            numberQuits2 = 1;
        } else {
            msgEndExperiment = "You have passed the attention checks. \n\n\nPress space to continue the experiment.";
            numberQuits2 = 0;
        }
      Begin Routine:
        # Force end of loop if subjects fail AC
        check_AC_acc_2 = float(hits_in_attention2)/8.0
        if check_AC_acc_2 < 0.50:
            msgEndExperiment = 'Your accuracy in the attention checks was too low. \n\n\nYou have reached the end of the experiment. \nPress the space to quit the experiment. Thank you!'
            numberQuits2 = 1
        else:
            msgEndExperiment = 'You have passed the attention checks.\n\nFeel free to take a short break of 1-2 minutes, if you need to.\nPress space to continue the experiment.'
            numberQuits2 = 0
    TextComponent textEndExperiment
      color = black
      letterHeight = 0.02
      startVal [time (s)] = 0.0
      text [set every repeat] = $msgEndExperiment
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    KeyboardComponent pressToEndExp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine quit_exp
    CodeComponent quitExpCode_2
      Code Type = Both
      Begin JS Routine:
        psychoJS.quit();
      Begin Routine:
        core.quit()
  Routine start_distraction
    TextComponent StartDistraction
      color = black
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        Well done!

        You have successfully completed the first task. We will now ask you to do some basic mental math (e.g., subtracting 7 from 100 for a short period of time).
        You are free to take a short break now before beginning the next task (max. 2 minutes).


        [Press the space bar when you’re ready to start]
    KeyboardComponent keyStart_distraction
      allowedKeys = 'left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine retrocue
    TextComponent retrocue_stim
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      text [set every repeat] = $cue
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    TextComponent fixationcross
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 4
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    TextComponent short_delay
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine time
    CodeComponent code_disTiming
      Code Type = Both
      Begin JS Routine:
        if ((disTrials.thisN === 0)) {
            startTime = globalClock.getTime();
        }
      Begin Routine:
        if disTrials.thisN == 0: # only on the first trial
            startTime = globalClock.getTime()
      Each Frame:
        if globalClock.getTime() - startTime >= 60:
            disTrials.finished = True
            continueRoutine = False
      Each JS Frame:
        if (((globalClock.getTime() - startTime) >= 60)) {
            disTrials.finished = true;
            continueRoutine = false;
        }
  Routine distraction
    CodeComponent code_dis
      Code Type = Both
      Begin JS Routine:
        textbox.refresh();
      Begin Routine:
        textbox.refresh()
      Each Frame:
        response = textbox.text
      Each JS Frame:
        response = textbox.text;
      End JS Routine:
        psychoJS.experiment.addData("typedResponse", response);
      End Routine:
        thisExp.addData('typedResponse', response)
    TextboxComponent textbox
      bold = False
      color = black
      editable = True
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (None, None)
      startVal [time (s)] = 0.0
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    TextComponent dis_question
      color = black
      letterHeight = 0.03
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    KeyboardComponent dis_log
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent dis_text
      color = black
      letterHeight = 0.02
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        Please count down from 100 in steps of sevens (7) and type your answer in the textbox below.


        [You can log each answer by clicking the space bar.]
    TextComponent submit_button2_2
      color = black
      letterHeight = 0.02
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = Click space to submit your answer
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  Routine feedback_dis
    TextComponent text_14
      color = black
      letterHeight = 0.02
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $corrAns
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    CodeComponent code_4
      Code Type = Both
      End JS Routine:
        /* Syntax Error: Fix Python code */
      End Routine:
        #trials_7.addData('correctAns',ThisFeedback)
  Routine start_LTM
    TextComponent StartLTM
      color = black
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        Well done!

        You have now completed most of the task. But there is still one important part to come.

        In this experiment’s last part, we will show you each object once again, in random rotations. We ask you to adjust the orientation of each object once more to match the orientation it had when we showed it to you for the very first time. We understand this might sometimes be hard. Just try the best you can!



        You can enter your responses as before,  by rotating each object with the left and right arrow keys, and then hitting the space bar to submit your repsonse.










        [Press the space bar when you’re ready to start]
    KeyboardComponent keyStart_LTM
      allowedKeys = 'left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine loop_control_ltm
    CodeComponent LoopContr
      Code Type = Both
      Begin Experiment:
        # Counter for the blocks
        thisBlock = 0


        # variable to determine conditions file
        ltm_task_blocks = (("conditions/conditions_ltm_" + str(expInfo["participant"])) + ".xlsx")
      Begin JS Experiment:
        thisBlock = 0;
        //variable to determine conditions file
        ltm_task_blocks = (("conditions/conditions_ltm_" + id.toString()) + ".xlsx");
      Begin JS Routine:
        LTMtrial.addData("ltm_task_blocks", ltm_task_blocks);
  Routine fixationcross2
    CodeComponent trial_counterLTM
      Code Type = Both
      Begin Experiment:
        # Counter for the trials
        ntrial = 0
        trialReal = []
      Begin JS Experiment:
        ntrial = 0;
        trialReal = [];
      Begin JS Routine:
        ntrial += 1;
        trialReal_ltm = ntrial;
        //psychoJS.experiment.addData("trialNumber_WM", trialReal);
        LTMtrial.addData("trialNumber_LTM", trialReal_ltm);
      Begin Routine:
        # Counter for which trial we are in right now
        ntrial += 1
        trialReal = ntrial
        thisExp.addData('trialNumber_LTM', trialReal)
        #mainStart = core.monotonicClock.getTime()
      Each JS Frame:
        // Change opacity of fixation cross when key is pressed
        //if ((key_resp.keys !== undefined)) {
            //crossDisappear_Main = 0;
        //}
      End Routine:
        # Use ntrial to determine attention checks after half of the trials
        if ntrial == 15:
           attentionCheck = 1
        else:
            attentionCheck = 0
    TextComponent fixationcross3
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1.5
      text [set every repeat] = +
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  Routine LTM_test
    CodeComponent adjustCode_LTM
      Code Type = Both
      Begin Experiment:
        ori_list = []
      Begin JS Experiment:
        ori_list = [];
      Begin JS Routine:
        kb = new core.Keyboard({psychoJS: psychoJS, clock: new util.Clock(), waitForStart: true});
        ltm_trial = trial_type;
        fixedOri_ltm = startOri_ltm;

        //rotation parameters
        keySpeed = 0.5;
        increasePerFrame = 0.25;
        //set the adjusmtent stimulus
        minimalDistance_ltm = 12.5;
        maxOri_ltm = 347.5;

        var oriRange_ltm = [11.25, 33.75, 56.25, 78.75, 101.25, 123.75, 146.25, 168.75, 191.25, 213.75, 236.25, 258.75, 281.25, 303.75, 326.25, 348.75];
        util.shuffle(oriRange_ltm);
        start_distance_ltm = oriRange_ltm[0];

        this_ori_ltm = start_distance_ltm;

        LTMtrial.addData("start_distance_ltm", start_distance_ltm);
        LTMtrial.addData("fixedOri_ltm",fixedOri_ltm);

        LTMtrial.addData("ltm_trial", ltm_trial);
      Begin Routine:
        kb = keyboard.Keyboard()
        kb.clock.reset()
        #  set starting val
        #set the fixed orientation to be randomly left or right
        fixedOri = startOri1
        keySpeed = 1
        increasePerFrame = 0.1

        #set the adjusmtent stimulus
        minimalDistance = 12.5 # minimal distance to fixedOri
        maxOri = 347.5 # (360-12.5)
        oriRange = np.linspace(minimalDistance, maxOri, 16) #create array of possible 16 orientations
        shuffle(oriRange)
        start_distance = oriRange[0]
        currentDistance = start_distance
        this_ori = fixedOri+start_distance # "this_ori" determines the orientation the object is shown in at the beginning of the test. The shown rotation will at least be 12.5 degrees different from the memorized orientation (fixed orientation)
        adjustment_startOri = this_ori

        # save information
        #trials.addData('adjustment_startOri', adjustment_startOri)
        #trials.addData('start_distance', start_distance)
        #trials.addData('fixedOri', fixedOri)
        #trials.addData('minimalDistance', minimalDistance)
        #trials.addData('maxOri', maxOri)
      Each Frame:
        keys = adjust_keys_LTM.getKeys(waitRelease=False, clear = False)
        if len(keys)>0:
            key = keys[len(keys)-1] #get recent key press
            if not key.duration:
                keySpeed += increasePerFrame #This is like acceleration speed so you could think of making some non-linear function
                if keySpeed > 10:
                    keySpeed = 1
                if key.name == "left":
                    this_ori += keySpeed
                if key.name == "right":
                    this_ori -= keySpeed
            else: # Meaning PressedKey was released
                keySpeed = 1

        # if the grating is rotated past 360 reset to start ori
        if abs(this_ori-adjustment_startOri)>=360:
            this_ori = adjustment_startOri
        elif abs(this_ori-adjustment_startOri)<=-360:
            this_ori = adjustment_startOri
      Each JS Frame:
        keys = adjust_keys_LTM.getKeys({"waitRelease": false, "clear": false});
        if ((keys.length > 0)) {
            key = keys[(keys.length - 1)];
            if ((! key.duration)) {
                keySpeed += increasePerFrame;
                if ((keySpeed > 10)) {
                    keySpeed = 0.5;
                }
                if ((key.name === "left")) {
                    this_ori_ltm += keySpeed;
                }
                if ((key.name === "right")) {
                    this_ori_ltm -= keySpeed;
                }
            } else {
                keySpeed = 0.5;
            }
        }



        if ((Math.abs((this_ori_ltm - start_distance_ltm)) >= 360)) {
            this_ori_ltm = start_distance_ltm;
        } else {
            if ((Math.abs((this_ori_ltm - start_distance_ltm)) <= (- 360))) {
            this_ori_ltm  = start_distance_ltm;
            }
        }
      End JS Routine:
        LTMtrial.addData("this_ori_ltm", this_ori_ltm);
        accuracy_ltm = Math.min(Math.abs((this_ori_ltm - fixedOri_ltm)), Math.abs((abs((this_ori_ltm - fixedOri_ltm)) - 360)));
        LTMtrial.addData("accuracy_ltm", accuracy_ltm);
        //ori_list.append(accuracy);
      End Routine:
        # save the final orientation state and accuracy (closeness to actual ori)
        #trials.addData('this_ori', this_ori)
        #accuracy = min(abs(this_ori-fixedOri), abs(abs(this_ori-fixedOri)-360))
        #trials.addData('accuracy', accuracy)
        #ori_list.append(accuracy)
    KeyboardComponent log_responseLTM
      allowedKeys [set every repeat] = 'right','left'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent contextStim_LTM
      color = green
      letterHeight = 0.02
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Recall
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    ImageComponent adjust_stim_LTM
      image [set every repeat] = $ltm_image
      ori [set every frame] = this_ori_ltm
      size = (300, 300)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent arrow_4
      image = stim/keys.png
      pos = (0, 230)
      size = (1000, 563)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent adjust_keys_LTM
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    ImageComponent CoverImage_LTM
      image = stim/coverImage.png
      size = (350, 350)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.2
      units = pix
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    CodeComponent arrow_keys_3
      Code Type = Auto->JS
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      Begin Experiment:
        #set size of images

        #imgChoice1="stim/keys.png"

        imgChoice3 = "stim/keys.png"
      Begin Routine:
        startTime_ltm = globalClock.getTime()
      Each Frame:
        #decrease size with left button
        #if event.getKeys(['left']):
            #imgChoice1="stim/left_arrow.png"

        #increase size with right button
        #if event.getKeys(['right']):
            #imgChoice1="stim/keys_right.png"

        if globalClock.getTime() - startTime_ltm >= 15.15:
            continueRoutine = False
            timeout_ltm = "1"
            imgChoice3="stim/respond_faster.png"
        else: # Meaning PressedKey was released
            timeout_ltm  = "0"

        #if key.name == "left":
             #imgChoice1="stim/left_arrow.png"
        #if key.name == "right":
             #imgChoice1="stim/keys_right.png"


        LTMtrial.addData('imgChoice3', imgChoice3)
        LTMtrial.addData('timeout_ltm', timeout_ltm)
    TextComponent submit_t1_3
      color = grey
      letterHeight = 0.02
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = Click space to submit your answer
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  Routine bonus
    CodeComponent bonusCode
      Code Type = Auto->JS
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      Begin Experiment:
        msgBonus = 'Feedback msg to say if participant gets bonus'
        get_bonus = []
      Begin Routine:
        util.shuffle(ori_list)
        sampled_accuracies = ori_list[0]


        # Display bonus message
        if  sampled_accuracies < 91 :
            msgBonus = 'CONGRATULATIONS! The randomly picked responses were correct. You will receive the BONUS!\n\nPlease press the space button to continue to the last part of this task in which we kindly ask you to provide some feedback.'
            get_bonus = 1
            thisExp.addData('Bonus', get_bonus)
        else:
            msgBonus = 'CONGRATULATIONS! The randomly picked responses were correct. You will receive the BONUS!\n\nPlease press the space button to continue to the last part of this task in which we kindly ask you to provide some feedback.'
            get_bonus = 0
            thisExp.addData('Bonus', get_bonus)
    TextComponent presentBonus
      color = black
      letterHeight = 0.02
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      text [set every repeat] = $msgBonus
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    KeyboardComponent key_bonus
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine feedback_exp
    CodeComponent code_dis_2
      Code Type = Auto->JS
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      Begin Routine:
        textbox.refresh()
      Each Frame:
        feedback = textbox.text
      End Routine:
        thisExp.addData('exp_feedback', feedback)
    TextboxComponent textbox_exp_feedback
      bold = False
      borderWidth = 4
      color = black
      editable = True
      letterHeight = 0.02
      pos = (0, -0.1)
      size = (None, None)
      startVal [time (s)] = 0.0
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    KeyboardComponent exp_feedback_log
      allowedKeys = 'right','enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent dis_text_2
      color = black
      letterHeight = 0.02
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        We are almost at the end of this experiment.

        In this last step we would like to ask you for your feedback. Feel free to tell us how difficult the task was for you or which strategy (if any) you used to solve the task.
    TextComponent submit_button2
      color = black
      letterHeight = 0.02
      pos = (0, -.3)
      startVal [time (s)] = 0.0
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      text:
        [When you are ready, please press “right arrow” key to go to our last message.]
  Routine theEnd
    CodeComponent code_JS
      Code Type = JS
      Begin JS Experiment:
        //code_JS from crib sheet
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
    MouseComponent mouse_2
      forceEndRoutineOnPress = never
      saveMouseState = never
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    TextComponent the_end
      color = black
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        Great! You finished the task. Thank you!

        In the next window, which will appear shortly, press “OK” (see image below).

        Only after pressing “OK”, you'll be directed to Prolific's website.

        Now press “space” to get there.
    KeyboardComponent the_end_exp
      allowedKeys = 'space', 'Escape'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    ImageComponent redirection_prolific
      image = stim/pic_redirection_prolific.png
      pos = (0, -0.25)
      size = (0.5, 0.3)
      startVal [time (s)] = 0.0
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  Routine training_stim
    ImageComponent train_stim1
      image [set every repeat] = $image1
      ori [set every repeat] = startOri1
      size = (300, 300)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1.5
      units = pix
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    TextComponent fixationCross_2
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 1.5
      stopVal [time (s)] = 2.5
      text [set every repeat] = +
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    ImageComponent train_stim2
      image [set every repeat] = $image2
      ori [set every repeat] = startOri2
      size = (300, 300)
      startVal [time (s)] = 2.5
      stopVal [time (s)] = 4
      units = pix
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    TextComponent delay_train
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 4
      stopVal [time (s)] = 4.5
      text = +
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  Routine retrocue_training
    TextComponent retrocue_stim_2
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      text [set every repeat] = $cue
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    TextComponent fixationcross_2
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 4
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    TextComponent short_delay_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine training_ori_adjustment
    CodeComponent adjustCode_train
      Code Type = Both
      Begin Experiment:
        # Counter for the bonus
        ori_list = []
      Begin JS Experiment:
        ori_list = [];
      Begin JS Routine:
        kb = new core.Keyboard({psychoJS: psychoJS, clock: new util.Clock(), waitForStart: true});

        fixedOri_t1 = startOri1;
        test1_trial = 1;
        //rotation parameters
        keySpeed = 0.5;
        increasePerFrame = 0.25;
        //set the adjusmtent stimulus
        //minimalDistance_t1 = 12.5;
        //maxOri_t1 = 347.5;
        var oriRange = [11.25, 33.75, 56.25, 78.75, 101.25, 123.75, 146.25, 168.75, 191.25, 213.75, 236.25, 258.75, 281.25, 303.75, 326.25, 348.75];
        util.shuffle(oriRange);
        start_distance_t1 = oriRange[0];
        //currentDistance_t1 = start_distance_t1;


        this_ori_t1 = start_distance_t1;

        training_loop.addData("start_distance_t1", start_distance_t1);
        training_loop.addData("test1_trial", test1_trial);
      Begin Routine:
        kb = keyboard.Keyboard()
        kb.clock.reset()

        #  set starting val
        #set the fixed orientation to be randomly left or right
        fixedOri = startOri1
        test1_trial = 1
        keySpeed = 1
        increasePerFrame = 0.2

        #set the adjusmtent stimulus
        minimalDistance = 12.5 # minimal distance to fixedOri
        maxOri = 347.5 # (360-12.5)
        oriRange = np.linspace(minimalDistance, maxOri, 16) #create array of possible 16 orientations
        shuffle(oriRange)
        start_distance = oriRange[0]

        if (startOri1 > start_distance) and (startOri1 < start_distance):
           this_ori = start_distance
        elif (startOri1 == start_distance):
           this_ori = start_distance + 45


        #this_ori = fixedOri+start_distance # "this_ori" determines the orientation the object is shown in at the beginning of the test. The shown rotation will at least be 12.5 degrees different from the memorized orientation (fixed orientation)
        adjustment_startOri = this_ori

        # save information
        trials.addData('adjustment_startOri', adjustment_startOri)
        trials.addData('start_distance', start_distance)
        trials.addData('fixedOri', fixedOri)
        trials.addData('minimalDistance', minimalDistance)
        trials.addData('maxOri', maxOri)
      Each Frame:
        keys = adjust_keys_t1.getKeys(waitRelease=False, clear = False)
        if len(keys)>0:
            key = keys[len(keys)-1] #get recent key press
            if not key.duration:
                keySpeed += increasePerFrame #This is like acceleration speed so you could think of making some non-linear function
                if keySpeed > 10:
                    keySpeed = 1
                if key.name == "left":
                    this_ori += keySpeed
                if key.name == "right":
                    this_ori -= keySpeed
            else: # Meaning PressedKey was released
                keySpeed = 1

        # if the grating is rotated past 360 reset to start ori
        if abs(this_ori-adjustment_startOri)>=360:
            this_ori = adjustment_startOri
        elif abs(this_ori-adjustment_startOri)<=-360:
            this_ori = adjustment_startOri
      Each JS Frame:
        keys = adjust_keys_training.getKeys({"waitRelease": false, "clear": false});
        if ((keys.length > 0)) {
            key = keys[(keys.length - 1)];
            if ((! key.duration)) {
                keySpeed += increasePerFrame;
                if ((keySpeed > 10)) {
                    keySpeed = 0.5;
                }
                if ((key.name === "left")) {
                    this_ori_t1 += keySpeed;
                }
                if ((key.name === "right")) {
                    this_ori_t1 -= keySpeed;
                }
            } else {
                keySpeed = 0.5;
            }
        }


        if ((Math.abs((this_ori_t1 - start_distance_t1)) >= 360)) {
            this_ori_t1 = start_distance_t1;
        } else {
            if ((Math.abs((this_ori_t1 - start_distance_t1)) <= (- 360))) {
                this_ori_t1 = start_distance_t1;
            }
        }
      End JS Routine:
        training_loop.addData("this_ori_t1", this_ori_t1);
        //accuracy_test1 = Math.min(Math.abs((this_ori_t1 - fixedOri_t1)), Math.abs((abs((this_ori_t1 - fixedOri_t1)) - 360)));
        //trials.addData("accuracy_test1 ", accuracy_test1);
        //trials.addData("trial_type", trial_type);
        //ori_list.append(accuracy_test1);
      End Routine:
        # save the final orientation state and accuracy (closeness to actual ori)
        trials.addData('this_ori', this_ori)
        accuracy = min(abs(this_ori-fixedOri), abs(abs(this_ori-fixedOri)-360))
        trials.addData('accuracy', accuracy)
        ori_list.append(accuracy)
    KeyboardComponent log_response_training
      allowedKeys [set every repeat] = 'right','left'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent adjust_keys_training
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    ImageComponent adjust_stim_training
      image [set every repeat] = $test1
      ori [set every frame] = this_ori_t1
      size = (300, 300)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent arrow
      image = stim/keys.png
      pos = (0, 230)
      size = (1000, 563)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent coverimage_t1_2
      image = stim/coverImage.png
      size = (350, 350)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.15
      units = pix
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    CodeComponent arrow_keys_2
      Code Type = Auto->JS
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      Begin Experiment:
        #set size of images

        #imgChoice1="stim/keys.png"

        imgChoice2 = "stim/keys.png"
      Begin Routine:
        startTime_prac = globalClock.getTime()
      Each Frame:
        #decrease size with left button
        #if event.getKeys(['left']):
            #imgChoice1="stim/left_arrow.png"

        #increase size with right button
        #if event.getKeys(['right']):
            #imgChoice1="stim/keys_right.png"

        if globalClock.getTime() - startTime_prac >= 15.15:
            continueRoutine = False
            timeout_practice = "1"
            imgChoice2="stim/respond_faster.png"
        else: # Meaning PressedKey was released
            timeout_practice  = "0"

        #if key.name == "left":
             #imgChoice1="stim/left_arrow.png"
        #if key.name == "right":
             #imgChoice1="stim/keys_right.png"


        training_loop.addData('imgChoice2', imgChoice2)
        training_loop.addData('timeout_practice', timeout_practice)
    TextComponent submit_t1_2
      color = grey
      letterHeight = 0.02
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = Click space to submit your answer
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  Routine delay
    PolygonComponent trial_start
      fillColor = grey
      lineColor = grey
      shape = cross
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2
      units = pix
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  Routine testing_start
    TextComponent text
      color = black
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        Well done!

        We will now start with the experiment. You will be able to take a short break after finishing 50 % of the trials.

        Remember, you can earn a bonus for answering correctly.

        [Press the space bar when you’re ready to start]
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine timeout
    ImageComponent image_4
      image [set every repeat] = $imgChoice1
      pos = (0, 215)
      size = (1000, 563)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      units = pix
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  Routine timeout_prac
    ImageComponent image
      image [set every repeat] = $imgChoice2
      pos = (0, 215)
      size = (1000, 563)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      units = pix
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  Routine timeout_LTM
    ImageComponent image_2
      image [set every repeat] = $imgChoice3
      pos = (0, 215)
      size = (1000, 563)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      units = pix
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Flow
  Routine Start
  LoopInitiator instrLoop loopType="TrialHandler"
    loopType = sequential
    nReps = 100
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    Routine instructions
  LoopTerminator instrLoop
  Routine adjustOr_instru
  Routine start_practice
  LoopInitiator training_loop loopType="TrialHandler"
    conditionsFile = conditions/training.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'image1': 'stim/basketballhoop02.png', 'image2': 'stim/floorlamp.png', 'cue': 1, 'test1': 'stim/basketballhoop02.png', 'trial_type': 'attended', 'startOri1': 70, 'startOri2': 111},
      {'image1': 'stim/bottleofredwine02.png', 'image2': 'stim/frenchfries.png', 'cue': 2, 'test1': 'stim/frenchfries.png', 'trial_type': 'attended', 'startOri1': 187, 'startOri2': 13},
      {'image1': 'stim/bowlingpin.png', 'image2': 'stim/leaf04.png', 'cue': 2, 'test1': 'stim/bowlingpin.png', 'trial_type': 'unattended', 'startOri1': 5, 'startOri2': 290},
      {'image1': 'stim/christmastree.png', 'image2': 'stim/noparkingsign.png', 'cue': 1, 'test1': 'stim/noparkingsign.png', 'trial_type': 'unattended', 'startOri1': 340, 'startOri2': 350},
      {'image1': 'stim/dishsoap.png', 'image2': 'stim/parkbench03.png', 'cue': 1, 'test1': 'stim/dishsoap.png', 'trial_type': 'attended', 'startOri1': 315, 'startOri2': 54},
      {'image1': 'stim/dreamcatcher.png', 'image2': 'stim/toynutcracker.png', 'cue': 2, 'test1': 'stim/toynutcracker.png', 'trial_type': 'attended', 'startOri1': 222, 'startOri2': 98}]
    Routine delay
    Routine training_stim
    Routine retrocue_training
    Routine training_ori_adjustment
    LoopInitiator timeout_p loopType="TrialHandler"
      loopType = sequential
      nReps = timeout_practice
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      Routine timeout_prac
    LoopTerminator timeout_p
  LoopTerminator training_loop
  Routine testing_start
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 4
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    Routine loop_control
    LoopInitiator trials_2 loopType="TrialHandler"
      Selected rows = $MyIndicesMain
      conditionsFile = $main_task_blocks
      loopType = sequential
      nReps = 1
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      Routine trialCounter
      Routine presentation_stims
      Routine retrocue
      Routine adjustOr_t1
      LoopInitiator trials_3 loopType="TrialHandler"
        loopType = sequential
        nReps = timeout
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        Routine timeout
      LoopTerminator trials_3
    LoopTerminator trials_2
    LoopInitiator break_trial loopType="TrialHandler"
      loopType = random
      nReps = break_routine
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      Routine BREAK
    LoopTerminator break_trial
    LoopInitiator AttentionExp loopType="TrialHandler"
      Selected rows = 1:7
      conditionsFile = conditions/attentionChecks.xlsx
      loopType = random
      nReps = repsAC
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      conditions:
        [{'Stim': 1, 'Loc1': 'one ↑', 'Loc2': 'three →', 'Loc3': 'four ↓', 'Loc4': '← two', 'CorrAns': 'up'},
        {'Stim': 3, 'Loc1': 'two ↑', 'Loc2': 'one →', 'Loc3': 'three ↓', 'Loc4': '← four', 'CorrAns': 'down'},
        {'Stim': 2, 'Loc1': 'three ↑', 'Loc2': 'four →', 'Loc3': 'one ↓', 'Loc4': '← two', 'CorrAns': 'left'},
        {'Stim': 4, 'Loc1': 'two↑', 'Loc2': 'three →', 'Loc3': 'four ↓', 'Loc4': '← one', 'CorrAns': 'down'},
        {'Stim': 1, 'Loc1': 'four ↑', 'Loc2': 'one →', 'Loc3': 'two ↓', 'Loc4': '← three', 'CorrAns': 'right'},
        {'Stim': 3, 'Loc1': 'two ↑', 'Loc2': 'three →', 'Loc3': 'one ↓', 'Loc4': '← four', 'CorrAns': 'right'},
        {'Stim': 2, 'Loc1': 'two ↑', 'Loc2': 'four →', 'Loc3': 'three ↓', 'Loc4': '← one', 'CorrAns': 'up'},
        {'Stim': 4, 'Loc1': 'one ↑', 'Loc2': 'four →', 'Loc3': 'two ↓', 'Loc4': '← three', 'CorrAns': 'right'}]
      Routine attentionCheck
    LoopTerminator AttentionExp
    LoopInitiator trials_att loopType="TrialHandler"
      loopType = random
      nReps = numberACresults
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      Routine continueOrEnd
    LoopTerminator trials_att
    LoopInitiator quitExp loopType="TrialHandler"
      loopType = random
      nReps = numberQuits2
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      Routine quit_exp
    LoopTerminator quitExp
  LoopTerminator trials
  Routine start_distraction
  LoopInitiator disTrials loopType="TrialHandler"
    conditionsFile = conditions/distractorTask.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'corrAns': 'Thanks, next one!', 'question': '100-7 = …?'},
      {'corrAns': 'Thanks, next one!', 'question': '93-7 = …?'},
      {'corrAns': 'Thanks, next one!', 'question': '86-7 = …?'},
      {'corrAns': 'Thanks, next one!', 'question': '79-7 = …?'},
      {'corrAns': 'Thanks, next one!', 'question': '72-7 = …?'},
      {'corrAns': 'Thanks, next one!', 'question': '65-7 = …?'},
      {'corrAns': 'Thanks, next one!', 'question': '58-7 = …?'},
      {'corrAns': 'Thanks, next one!', 'question': '51-7 = …?'},
      {'corrAns': 'Thanks, next one!', 'question': '44-7 = …?'},
      {'corrAns': 'Thanks, next one!', 'question': '37-7 = …?'},
      {'corrAns': 'Thanks, next one!', 'question': '30-7 = …?'},
      {'corrAns': 'Thanks, next one!', 'question': '23-7 = …?'},
      {'corrAns': 'Thanks, next one!', 'question': '16-7 = …?'},
      {'corrAns': 'Thanks, next one!', 'question': '9-7 = …?'},
      {'corrAns': 'Thanks, next one!', 'question': '2-7 = …?'}]
    Routine time
    Routine distraction
    Routine feedback_dis
  LoopTerminator disTrials
  Routine start_LTM
  LoopInitiator LTMtrial loopType="TrialHandler"
    conditionsFile = $ltm_task_blocks
    loopType = random
    nReps = 1
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    Routine loop_control_ltm
    Routine fixationcross2
    Routine LTM_test
    LoopInitiator trials_4 loopType="TrialHandler"
      loopType = random
      nReps = timeout_ltm
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      Routine timeout_LTM
    LoopTerminator trials_4
  LoopTerminator LTMtrial
  LoopInitiator BonusLoop loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine bonus
  LoopTerminator BonusLoop
  Routine feedback_exp
  Routine theEnd
