PsychoPy2experiment version="2021.2.3"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=28E70960
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Incomplete URL = https://app.prolific.co/submissions/complete?cc=1B104265
  Monitor = testMonitor
  Resources = ['conditions/conditions_309.xlsx', 'conditions/conditions_310.xlsx', 'conditions/conditions_311.xlsx', 'conditions/conditions_312.xlsx', 'conditions/conditions_313.xlsx', 'conditions/conditions_314.xlsx', 'conditions/conditions_315.xlsx', 'conditions/conditions_316.xlsx', 'conditions/conditions_317.xlsx', 'conditions/conditions_318.xlsx', 'conditions/conditions_319.xlsx', 'conditions/conditions_320.xlsx', 'conditions/conditions_321.xlsx', 'conditions/conditions_322.xlsx', 'conditions/conditions_323.xlsx', 'conditions/conditions_324.xlsx', 'conditions/conditions_325.xlsx', 'conditions/conditions_326.xlsx', 'conditions/conditions_327.xlsx', 'conditions/conditions_328.xlsx', 'conditions/conditions_329.xlsx', 'conditions/conditions_330.xlsx', 'conditions/conditions_331.xlsx', 'conditions/conditions_332.xlsx', 'conditions/conditions_333.xlsx', 'conditions/conditions_334.xlsx', 'conditions/conditions_335.xlsx', 'conditions/conditions_336.xlsx', 'conditions/conditions_337.xlsx', 'conditions/conditions_338.xlsx', 'conditions/conditions_339.xlsx', 'conditions/conditions_340.xlsx', 'conditions/conditions_341.xlsx', 'conditions/conditions_342.xlsx', 'conditions/conditions_343.xlsx', 'conditions/conditions_344.xlsx', 'conditions/conditions_345.xlsx', 'conditions/conditions_346.xlsx', 'conditions/conditions_347.xlsx', 'conditions/conditions_348.xlsx', 'conditions/conditions_349.xlsx', 'conditions/conditions_350.xlsx', 'conditions/conditions_351.xlsx', 'conditions/conditions_352.xlsx', 'conditions/conditions_353.xlsx', 'conditions/conditions_354.xlsx', 'conditions/conditions_355.xlsx', 'conditions/conditions_356.xlsx', 'conditions/conditions_357.xlsx', 'conditions/conditions_358.xlsx', 'conditions/conditions_359.xlsx', 'conditions/conditions_360.xlsx', 'conditions/conditions_361.xlsx', 'conditions/conditions_362.xlsx', 'conditions/conditions_363.xlsx', 'conditions/conditions_364.xlsx', 'conditions/conditions_365.xlsx', 'conditions/conditions_366.xlsx', 'conditions/conditions_367.xlsx', 'conditions/conditions_368.xlsx', 'conditions/conditions_369.xlsx', 'conditions/conditions_370.xlsx', 'conditions/conditions_371.xlsx', 'conditions/conditions_372.xlsx', 'conditions/conditions_373.xlsx', 'conditions/conditions_374.xlsx', 'conditions/conditions_375.xlsx', 'conditions/conditions_376.xlsx', 'conditions/conditions_377.xlsx', 'conditions/conditions_378.xlsx', 'conditions/conditions_379.xlsx', 'conditions/conditions_380.xlsx', 'conditions/conditions_381.xlsx', 'conditions/conditions_382.xlsx', 'conditions/conditions_384.xlsx', 'conditions/conditions_385.xlsx', 'conditions/conditions_386.xlsx', 'conditions/conditions_387.xlsx', 'conditions/conditions_388.xlsx', 'conditions/conditions_389.xlsx', 'conditions/conditions_390.xlsx', 'conditions/conditions_391.xlsx', 'conditions/conditions_392.xlsx', 'conditions/conditions_393.xlsx', 'conditions/conditions_394.xlsx', 'conditions/conditions_395.xlsx', 'conditions/conditions_396.xlsx', 'conditions/conditions_397.xlsx', 'conditions/conditions_398.xlsx', 'conditions/conditions_399.xlsx', 'conditions/conditions_400.xlsx', 'conditions/conditions_401.xlsx', 'conditions/conditions_402.xlsx', 'conditions/conditions_403.xlsx', 'conditions/conditions_404.xlsx', 'conditions/conditions_405.xlsx', 'conditions/conditions_406.xlsx', 'conditions/conditions_407.xlsx', 'conditions/conditions_408.xlsx', 'conditions/conditions_ltm_309.xlsx', 'conditions/conditions_ltm_310.xlsx', 'conditions/conditions_ltm_311.xlsx', 'conditions/conditions_ltm_312.xlsx', 'conditions/conditions_ltm_313.xlsx', 'conditions/conditions_ltm_314.xlsx', 'conditions/conditions_ltm_315.xlsx', 'conditions/conditions_ltm_316.xlsx', 'conditions/conditions_ltm_317.xlsx', 'conditions/conditions_ltm_318.xlsx', 'conditions/conditions_ltm_319.xlsx', 'conditions/conditions_ltm_320.xlsx', 'conditions/conditions_ltm_321.xlsx', 'conditions/conditions_ltm_322.xlsx', 'conditions/conditions_ltm_323.xlsx', 'conditions/conditions_ltm_324.xlsx', 'conditions/conditions_ltm_325.xlsx', 'conditions/conditions_ltm_326.xlsx', 'conditions/conditions_ltm_327.xlsx', 'conditions/conditions_ltm_328.xlsx', 'conditions/conditions_ltm_329.xlsx', 'conditions/conditions_ltm_330.xlsx', 'conditions/conditions_ltm_331.xlsx', 'conditions/conditions_ltm_332.xlsx', 'conditions/conditions_ltm_333.xlsx', 'conditions/conditions_ltm_334.xlsx', 'conditions/conditions_ltm_335.xlsx', 'conditions/conditions_ltm_336.xlsx', 'conditions/conditions_ltm_337.xlsx', 'conditions/conditions_ltm_338.xlsx', 'conditions/conditions_ltm_339.xlsx', 'conditions/conditions_ltm_340.xlsx', 'conditions/conditions_ltm_341.xlsx', 'conditions/conditions_ltm_342.xlsx', 'conditions/conditions_ltm_343.xlsx', 'conditions/conditions_ltm_344.xlsx', 'conditions/conditions_ltm_345.xlsx', 'conditions/conditions_ltm_346.xlsx', 'conditions/conditions_ltm_347.xlsx', 'conditions/conditions_ltm_348.xlsx', 'conditions/conditions_ltm_349.xlsx', 'conditions/conditions_ltm_350.xlsx', 'conditions/conditions_ltm_351.xlsx', 'conditions/conditions_ltm_352.xlsx', 'conditions/conditions_ltm_353.xlsx', 'conditions/conditions_ltm_354.xlsx', 'conditions/conditions_ltm_355.xlsx', 'conditions/conditions_ltm_356.xlsx', 'conditions/conditions_ltm_357.xlsx', 'conditions/conditions_ltm_358.xlsx', 'conditions/conditions_ltm_359.xlsx', 'conditions/conditions_ltm_360.xlsx', 'conditions/conditions_ltm_361.xlsx', 'conditions/conditions_ltm_362.xlsx', 'conditions/conditions_ltm_363.xlsx', 'conditions/conditions_ltm_364.xlsx', 'conditions/conditions_ltm_365.xlsx', 'conditions/conditions_ltm_366.xlsx', 'conditions/conditions_ltm_367.xlsx', 'conditions/conditions_ltm_368.xlsx', 'conditions/conditions_ltm_369.xlsx', 'conditions/conditions_ltm_370.xlsx', 'conditions/conditions_ltm_371.xlsx', 'conditions/conditions_ltm_372.xlsx', 'conditions/conditions_ltm_373.xlsx', 'conditions/conditions_ltm_374.xlsx', 'conditions/conditions_ltm_375.xlsx', 'conditions/conditions_ltm_376.xlsx', 'conditions/conditions_ltm_377.xlsx', 'conditions/conditions_ltm_378.xlsx', 'conditions/conditions_ltm_379.xlsx', 'conditions/conditions_ltm_380.xlsx', 'conditions/conditions_ltm_381.xlsx', 'conditions/conditions_ltm_382.xlsx', 'conditions/conditions_ltm_384.xlsx', 'conditions/conditions_ltm_385.xlsx', 'conditions/conditions_ltm_386.xlsx', 'conditions/conditions_ltm_387.xlsx', 'conditions/conditions_ltm_388.xlsx', 'conditions/conditions_ltm_389.xlsx', 'conditions/conditions_ltm_390.xlsx', 'conditions/conditions_ltm_391.xlsx', 'conditions/conditions_ltm_392.xlsx', 'conditions/conditions_ltm_393.xlsx', 'conditions/conditions_ltm_394.xlsx', 'conditions/conditions_ltm_395.xlsx', 'conditions/conditions_ltm_396.xlsx', 'conditions/conditions_ltm_397.xlsx', 'conditions/conditions_ltm_398.xlsx', 'conditions/conditions_ltm_399.xlsx', 'conditions/conditions_ltm_400.xlsx', 'conditions/conditions_ltm_401.xlsx', 'conditions/conditions_ltm_402.xlsx', 'conditions/conditions_ltm_403.xlsx', 'conditions/conditions_ltm_404.xlsx', 'conditions/conditions_ltm_405.xlsx', 'conditions/conditions_ltm_406.xlsx', 'conditions/conditions_ltm_407.xlsx', 'conditions/conditions_ltm_408.xlsx', 'conditions/conditions_249.xlsx', 'conditions/conditions_250.xlsx', 'conditions/conditions_ltm_249.xlsx', 'conditions/conditions_ltm_250.xlsx', 'conditions/conditions_289.xlsx', 'conditions/conditions_291.xlsx', 'conditions/conditions_292.xlsx', 'conditions/conditions_293.xlsx', 'conditions/conditions_294.xlsx', 'conditions/conditions_295.xlsx', 'conditions/conditions_296.xlsx', 'conditions/conditions_297.xlsx', 'conditions/conditions_298.xlsx', 'conditions/conditions_299.xlsx', 'conditions/conditions_300.xlsx', 'conditions/conditions_301.xlsx', 'conditions/conditions_302.xlsx', 'conditions/conditions_303.xlsx', 'conditions/conditions_304.xlsx', 'conditions/conditions_305.xlsx', 'conditions/conditions_306.xlsx', 'conditions/conditions_307.xlsx', 'conditions/conditions_308.xlsx', 'conditions/conditions_ltm_289.xlsx', 'conditions/conditions_ltm_291.xlsx', 'conditions/conditions_ltm_292.xlsx', 'conditions/conditions_ltm_293.xlsx', 'conditions/conditions_ltm_294.xlsx', 'conditions/conditions_ltm_295.xlsx', 'conditions/conditions_ltm_296.xlsx', 'conditions/conditions_ltm_297.xlsx', 'conditions/conditions_ltm_298.xlsx', 'conditions/conditions_ltm_299.xlsx', 'conditions/conditions_ltm_300.xlsx', 'conditions/conditions_ltm_301.xlsx', 'conditions/conditions_ltm_302.xlsx', 'conditions/conditions_ltm_303.xlsx', 'conditions/conditions_ltm_304.xlsx', 'conditions/conditions_ltm_305.xlsx', 'conditions/conditions_ltm_306.xlsx', 'conditions/conditions_ltm_307.xlsx', 'conditions/conditions_ltm_308.xlsx', 'conditions/correct_adjustment.xlsx', 'stim/respond_faster.png', 'stim/keys.png', 'stim/keys_right.png', 'stim/left_arrow.png', 'stim/eiffeltower.png', 'stimuli/accordion02.png', 'stimuli/acorn.png', 'stimuli/acousticguitar02.png', 'stimuli/adjustablewrench02a.png', 'stimuli/africanelephant.png', 'stimuli/aloe01.png', 'stimuli/antlers.png', 'stimuli/apron.png', 'stimuli/armadillo.png', 'stimuli/backpack01a.png', 'stimuli/badmintonracket.png', 'stimuli/barbecue02.png', 'stimuli/barnowl.png', 'stimuli/bassethound.png', 'stimuli/bicycle.png', 'stimuli/blender.png', 'stimuli/bluejay.png', 'stimuli/boot01.png', 'stimuli/boxingglove01.png', 'stimuli/bulldozer.png', 'stimuli/buoy.png', 'stimuli/candelabra.png', 'stimuli/cat.png', 'stimuli/cellphone.png', 'stimuli/chameleon.png', 'stimuli/chessknight03b.png', 'stimuli/chipmunk.png', 'stimuli/chisel01b.png', 'stimuli/clownfish.png', 'stimuli/comb02b.png', 'stimuli/corkscrew03a.png', 'stimuli/cornet.png', 'stimuli/cupcake.png', 'stimuli/desktopcomputer.png', 'stimuli/dragonfly01.png', 'stimuli/dromedary.png', 'stimuli/duck01.png', 'stimuli/fireextinguisher02.png', 'stimuli/flamingo.png', 'stimuli/flipflop01a.png', 'stimuli/fryingpan01.png', 'stimuli/gardengnome01.png', 'stimuli/gecko.png', 'stimuli/globe.png', 'stimuli/gorilla.png', 'stimuli/graduationcap.png', 'stimuli/greatwhiteshark.png', 'stimuli/greywolf.png', 'stimuli/handbrush02.png', 'stimuli/handfan01b.png', 'stimuli/hat04a.png', 'stimuli/hen.png', 'stimuli/honeybee.png', 'stimuli/jeep.png', 'stimuli/lightbulb01.png', 'stimuli/lock02a.png', 'stimuli/loppingshears.png', 'stimuli/lynx01.png', 'stimuli/mailbox02.png', 'stimuli/makeupbrush04.png', 'stimuli/maraca02a.png', 'stimuli/megaphone.png', 'stimuli/microscope.png', 'stimuli/monument.png', 'stimuli/motorcycle.png', 'stimuli/motoroilbottle04.png', 'stimuli/nail.png', 'stimuli/needlenosepliers03b.png', 'stimuli/nyala.png', 'stimuli/officechair02.png', 'stimuli/outdoorheater.png', 'stimuli/paintroller02.png', 'stimuli/parrot01.png', 'stimuli/peacock.png', 'stimuli/pear01.png', 'stimuli/penguin.png', 'stimuli/photocopier.png', 'stimuli/pintofbeer.png', 'stimuli/pipewrench.png', 'stimuli/pitcher02a.png', 'stimuli/pumpkin.png', 'stimuli/pylon01.png', 'stimuli/quartz.png', 'stimuli/radio03a.png', 'stimuli/razor04a.png', 'stimuli/redfox.png', 'stimuli/rhinoceros02.png', 'stimuli/rollerblade.png', 'stimuli/sailboat.png', 'stimuli/saintbernard.png', 'stimuli/saw02b.png', 'stimuli/scissors02a.png', 'stimuli/scrubbingbrush05a.png', 'stimuli/shoppingcart.png', 'stimuli/snowglobe.png', 'stimuli/soapdispenser03b.png', 'stimuli/stackingring01b.png', 'stimuli/stapler03b.png', 'stimuli/tabascosauce.png', 'stimuli/thumbtack02b.png', 'stimuli/toyhockeystick02a.png', 'stimuli/toytractor02a.png', 'stimuli/travelmug.png', 'stimuli/watercooler.png', 'stimuli/wateringcan.png', 'stimuli/wheelbarrow01.png', 'stimuli/white.png', 'stimuli/windshieldwasherfluid.png', 'stimuli/windsurfboard.png', 'stimuli/witchhat.png', 'stimuli/zebra.png', 'conditions/conditions_ltm_15.xlsx', 'conditions/conditions_ltm_16.xlsx', 'conditions/conditions_ltm_17.xlsx', 'conditions/conditions_ltm_18.xlsx', 'conditions/conditions_ltm_19.xlsx', 'conditions/conditions_ltm_10.xlsx', 'conditions/conditions_ltm_11.xlsx', 'conditions/conditions_ltm_12.xlsx', 'conditions/conditions_ltm_13.xlsx', 'conditions/conditions_ltm_14.xlsx', 'conditions/conditions_ltm_4.xlsx', 'conditions/conditions_ltm_5.xlsx', 'conditions/conditions_ltm_7.xlsx', 'conditions/conditions_ltm_8.xlsx', 'conditions/conditions_ltm_9.xlsx', 'stim/pic_redirection_prolific.png', 'conditions/instrcutions/instru_1.png', 'conditions/instrcutions/instru_2.png', 'conditions/instrcutions/instru_3.png', 'conditions/instrcutions/instru_4.png', 'conditions/instrcutions/instru_5.png', 'conditions/instrcutions/instru_6.png', 'conditions/instrcutions/instru_7.png', 'conditions/instrcutions/instru_8.png', 'conditions/instrcutions/instru_9.png']
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1728, 1117]
  color = $[1,1,1]
  expName = demo_task
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Routines
  Routine Start
    CodeComponent initializeJS
      Code Type = JS
      Before JS Experiment:
        function makeArr(startValue, stopValue, cardinality) {
          var arr = [];
          var step = (stopValue - startValue) / (cardinality - 1);
          for (var i = 0; i < cardinality; i++) {
            arr.push(startValue + (step * i));
          }
          return arr;
        }
      Begin JS Experiment:
        thisExp = psychoJS.experiment;

        Array.prototype.append = [].push;
        shuffle = util.shuffle;
        average = (arr) => (arr.reduce((a, b) => (a + b), 0)) / arr.length;
    MouseComponent startMouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
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  Routine instructions
    CodeComponent codeJScomponent
      Code Type = Auto->JS
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    CodeComponent imagesInstru
      Code Type = Auto->JS
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      Begin Experiment:
        img_no = 1

        current_img = 'conditions/instrcutions/instru_' + str(img_no) + '.png'
      Begin Routine:
        current_img = 'conditions/instrcutions/instru_' + str(img_no) + '.png'
      End Routine:
        # if the participant pressed the left key, decrease the image
        # number by one (e. g. going from "image 2" to "image 1"),
        # and if they pressed the right key, increase the image number
        # by one ("image 2" -> "image 3")
        if (img_no > 1) and ((instru_keys.keys == str('left')) or (instru_keys.keys == 'left')):
            img_no -= 1
        elif (img_no < 10) and ((instru_keys.keys == str('right')) or (instru_keys.keys == 'right')):
            img_no += 1
        elif (img_no == 9) and ((instru_keys.keys == 'space') or (instru_keys.keys == str('space'))):
            instructionsLoop.finished = True
            trials.finished = True
        current_img = 'conditions/instrcutions/instru_' + str(img_no) + '.png'
    CodeComponent instructions_2
      Code Type = Auto->JS
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      Begin Experiment:
        instrDict = { "1": "Welcome to this experiment!\nTo continue, please press the right arrow key on your keyboard.",
                      "2": "During this experiment, we will test your short-term memory for object orientations.\n\nIn the following, we will explain how the task works.\n\nYou can navigate back and forth through the intructions by using the arrow keys.",
                      "3": "We will present objects that are rotated.\n\nYou will be asked to remember the objects' orientation and recall it a few seconds later.\n\nIt always goes like this: whenever you see the hint “remember”, it means we are showing the object for the first time, and you should keep its orientation in memory.\nWhenever you see the hint “recall” (a few seconds later) it means we are showing the object again, but its orientation will be slightly changed.\nYou will have to press the right or left arrow button to rotate the object back to its original (remembered) orientation. – Be careful, you can only press one key!\n\n\n\nThere will be three different types of trials (let's call them trial type A, B and C).",
                      "4": "In trial type A, you will be presented with only one object.\n\nAfter several seconds, you will be asked to recall the orientation of this object and press the left or right arrow button to rotate the object back to its original position.",
                      "5": "In trial type B, you will be presented with two rotated objects to remember.\n\nYour task is again to remember each object's orientation, and to recall them a few seconds later. This time it will just be two orientations to recall.",
                      "6": "In trial type C, you will again be presented with two objects at first.\n\nHowever, this time you will be asked to recall only one of the two later on.\nIt can be either the first or the second object, which means you should at first keep them both in memory (just like in trial type B on the previous slide).\n\nAs we said earlier: when you see “remember”, keep  what you see in memory. When you see “recall”, recall what you remembered and move the object back to its original orientation.\nThis way you will always do right, no matter which trial type.",
                      "7": "How can you let us know  what you recall?\nSimple: at recall, we will show you the object in question in an orientation that is slightly different from the one you remembered and you will be asked to quickly press one arrow key (only one press) to rotate the object to its original orientation.\n\nPressing the right arrow key will rotate the object to the right.\nPressing the left arrow key will rotate the object to the left.\n\nOnce you press one of the keys, your answer is automatically logged and the task continues.",
                      "8": "Throughout the experiment, please try to respond both fast and accurately. If you do not answer within a couple of seconds, you will see the instruction 'please respond answer' on the screen which indicates that you did not respond in time.\n\nAlways after a couple of trials you will receive feedback about your average accuracy. In the end of the experiment, we will randomly select 10 of your responses. When your answers were mostly accurate, you will receive a bonus payment.\n\nWhenever you run into technical difficulties during the task, do not restart it, but rather return to Prolific.\n\nIn the following you can practice how to answer by pressing the right and left arrow key to rotate the object back to its original orientation.\n\n\n\n[Please press the right arrow when you're ready]",
                      "9": "[Please press the right arrow when you understood the instructions]",
                      "10": "[Please press the right arrow when you're ready]"
        }

        currentInstr = "1"
      End Routine:
        print(instru_keys.keys)

        if instru_keys.keys == "left":
            currentInstr = int(currentInstr) - 1
        elif instru_keys.keys == "right":
            currentInstr = int(currentInstr) + 1

        if currentInstr == 0:
            currentInstr = 1  # can't go lower than
        elif currentInstr == 9:
            instrLoop.finished=True

        currentInstr = str(currentInstr)
    TextComponent instruction
      color = black
      letterHeight = 0.02
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instrDict[currentInstr]
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    ImageComponent instrupic
      image [set every repeat] = $current_img
      pos = (0, -190)
      size = (1100, 619)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent instru_keys
      allowedKeys = 'right','space','left'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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
  Routine testing
    TextComponent text_5
      color = black
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        Well done!

        We will now start with the experiment. You will be able to take a short break after finishing 50 % of the trials.

        Remember, you can earn a bonus for answering correctly.

        [Press the space bar when you’re ready to start]
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine break_2
    TextComponent breakText
      color = black
      letterHeight = 0.02
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 120
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      text:
        Now you can take a short break (2 minutes max.).
        After two minutes the task will automatically continue.

        [Press the space bar when you’re ready to continue already now]
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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
  Routine time
    CodeComponent code_disTiming
      Code Type = Auto->JS
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      Begin Routine:
        if disTrials.thisN == 0: # only on the first trial
            startTime = globalClock.getTime()
      Each Frame:
        if globalClock.getTime() - startTime >= 60:
            disTrials.finished = True
            continueRoutine = False
  Routine attentionCheck
    CodeComponent run_check
      Code Type = Auto->JS
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      Begin Experiment:
        AC_acc = []
        hits_in_attention2 = 0
      End Routine:
        if key_respAC_prac.corr:
            AC_acc = 1
            hits_in_attention2 += 1
        else:
            AC_acc = 0

        thisExp.addData('AC_acc', AC_acc)
    KeyboardComponent key_respAC_prac
      allowedKeys = 'up','down','left','right'
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      store = first key
      storeCorrect = True
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    TextComponent Pos1_prac
      color = black
      letterHeight = 0.03
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $Loc1
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    TextComponent Pos2_prac
      color = black
      letterHeight = 0.03
      pos = (0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $Loc2
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    TextComponent Pos3_prac
      color = black
      letterHeight = 0.03
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $Loc3
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    TextComponent Pos4_prac
      color = black
      letterHeight = 0.03
      pos = (-0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $Loc4
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    TextComponent taskAC_prac
      color = black
      letterHeight = 0.03
      pos = (0, 0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Use arrow keys to pick the number shown in the center
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    TextComponent ac_stim_prac
      color = red
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $Stim
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  Routine adjustOr_instru
    TextComponent adjusting_header
      color = black
      letterHeight = 0.02
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        This is to give you an idea what we mean with changing the orientation of an image by using the arrow buttons.

        The object on the left shows an example of the original orientation an object could have had and the right object now has a slightly different orientation. You can use the right and left arrow keys to rotate the right object to the orientation that matches the one you here see on the left.

        Ones to click the right or left arrow, your answer is recorded.
        Here, for demonstration, we will give you feedback after each of your answers (in the real task, you will only receive feedback after a couple of trials).
    KeyboardComponent log_response_instru
      allowedKeys [set every repeat] = 'right','left'
      correctAns = $CorrAnsOri
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent adjust_practice
      Code Type = Both
      Begin Experiment:
        orientation = 0
      Begin JS Experiment:
        orientation = 0;
      Begin JS Routine:
        orientation = 0;
        keySpeed = 1;
        increasePerFrame = 0.1;
      Begin Routine:
        #adjust_stim_8.setAutoDraw(False)
        #kb = keyboard.Keyboard()

        orientation = 0
        keySpeed = 1
        increasePerFrame = 0.1

        #set the adjusmtent stimulus
      Each Frame:
        keys = adjust_keys_intru.getKeys(waitRelease=False, clear = False)
        if len(keys)>0:
            key = keys[len(keys)-1] #get recent key press
            if not key.duration:
                keySpeed += increasePerFrame #This is like acceleration speed so you could think of making some non-linear function
                if keySpeed > 10:
                    keySpeed = 1
                if key.name == "left":
                    practice_ori_test += keySpeed
                if key.name == "right":
                    practice_ori_test -= keySpeed
            else: # Meaning PressedKey was released
                keySpeed = 1
      Each JS Frame:
        keys = adjust_keys_intru.getKeys({"waitRelease": false, "clear": false});
        if ((keys.length > 0)) {
            key = keys[(keys.length - 1)];
            if ((! key.duration)) {
                keySpeed += increasePerFrame;
                if ((keySpeed > 10)) {
                    keySpeed = 0.5;
                }
                if ((key.name === "left")) {
                    practice_ori_test+= 10;
                }
                if ((key.name === "right")) {
                    practice_ori_test -= 10;
                }
            } else {
                keySpeed = 0.5;
            }
        }
    ImageComponent adjust_stim_instru
      image = stim/eiffeltower.png
      ori [set every frame] = practice_ori_test
      pos = ( 200,-200)
      size = (300, 300)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent arrow_1
      image = stim/keys.png
      size = (1000, 563)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent adjust_keys_intru
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    ImageComponent cover_image_instru
      image = stim/coverImage.png
      size = (350, 350)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.2
      units = pix
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    CodeComponent run_check_practice
      Code Type = Auto->JS
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      Begin Experiment:
        corr_history3= []
        hits_in_general3= 0
        feedback = ' '
      End Routine:
        if log_response_instru.corr:
            corr_history3 = 1
            hits_in_general3 += 1
            msgEndExperiment_feedback = 'Correct!'
        else:
            corr_history3 = 0
            msgEndExperiment_feedback = 'Incorrect!'
    ImageComponent image_practice_2
      image = stim/eiffeltower.png
      ori [set every repeat] = practice_ori
      pos = (-200, -200)
      size = (300, 300)
      startVal [time (s)] = 0.0
      units = pix
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  Routine start_practice
    TextComponent practice
      color = black
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        Now let’s practice a couple of example trials of  the actual task!

        Don't worry about making mistakes, just try to get a good grip on the task.

        [Press the space bar when you’re ready to start]
    KeyboardComponent practiceStart
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine loop_control
    CodeComponent LoopContr_2
      Code Type = Both
      Begin Experiment:
        # Counter for the blocks
        thisBlock = 0


        # variable to determine conditions file
        main_task_blocks = (("conditions/conditions_" + str(expInfo["participant"])) + ".xlsx")

        # counter variable for accuracy bonus at the end
        bonus_accuracies = []
      Begin JS Experiment:
        thisBlock = 0;
        //variable to determine conditions file
        //input = await fetch("https://rider.exp.arc.mpib.org/api/inputs/by-group/ids").then(r => r.json());
        //id = input.id;
        id = 392;

        psychoJS.experiment.addData("participant_id",id);
        main_task_blocks = (("conditions/conditions_" + id.toString()) + ".xlsx");
      Begin JS Routine:
        thisBlock += 1;

        // Manually insert which rows have to be taken depending on the block number
        // This cannot be automated due to constraints in row selection for every iteration of the loop
        //the first block are the practice trials and the following blocks are the experiment blocks
         if ((thisBlock === 1)) {
            MyIndicesMain = "0:6";
        } else {
            if ((thisBlock === 2)) {
                MyIndicesMain = "6:20";
            } else {
                if ((thisBlock === 3)) {
                    MyIndicesMain = "20:40";
                } else {
                    if ((thisBlock === 4)) {
                        MyIndicesMain = "40:66";
                    }
                }
            }
        }
        //After block 1 we start the testing (experiment)
        if ((thisBlock === 1)) {
            testing_start = 1;
        } else {
            testing_start = 0;
        }


        //After block 1 we also give feedback for the first time
        if ((thisBlock === 1)) {
            feedback = 1;
        } else {
            feedback = 0;
        }

        //After block 2 we do the attention checks

        if ((thisBlock === 2)) {
            repsAC = 1;
            numberACresults = 1;
        } else {
            repsAC = 0;
            numberACresults = 0;
        }

        //After block 3 we do a break
        if ((thisBlock === 3)) {
            break_routine = 1;
        } else {
            break_routine = 0;
        }

        trials.addData("WM_condition_file", main_task_blocks);
      Begin Routine:
        # First time we enter the loop, we are in block 1
        thisBlock +=1

        # A slice between two specific rows - trials for the block
        #myIndices = slice(startItem, endItem+1)
        # the first block are the practice trials and the following blocks are the experiment blocks
        bonus_accuracies = []
        if thisBlock == 1:
            MyIndicesMain = "0:6"
        elif thisBlock == 2:
            MyIndicesMain = "6:20"
        elif thisBlock == 3:
            MyIndicesMain = "20:40"
        elif thisBlock == 4:
            MyIndicesMain = "40:66"

        # After block 1 we start the testing (experiment)
        if thisBlock == 1:
            testing_start = 1
        else:
            testing_start = 0



        # After block 2 we do the attention checks
        if thisBlock == 2:
            repsAC = 1
            numberACresults = 1
        else:
            repsAC = 0
            numberACresults = 0


        # After block 3 we have a small break
        if thisBlock == 3:
            break_routine = 1
        else:
            break_routine = 0
  Routine trial_type2_3
    TextComponent contextStim1
      color = red
      letterHeight = 0.02
      pos = (0, 0.29)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 5
      text = Remember
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    ImageComponent Stim1
      image [set every repeat] = $image1
      ori [set every repeat] = startOri1
      size = (300, 300)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1.5
      units = pix
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    TextComponent fixationCross
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 1.5
      stopVal [time (s)] = 2.5
      text [set every repeat] = +
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    ImageComponent Stim2
      image [set every repeat] = $image2
      ori [set every repeat] = startOri2
      size = (300, 300)
      startVal [time (s)] = 2.5
      stopVal [time (s)] = 4
      units = pix
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    TextComponent delay_1
      letterHeight = 0.1
      startVal [time (s)] = 4
      stopVal [time (s)] = 5
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  Routine trial_baseline
    TextComponent contextStim2
      color = red
      letterHeight = 0.02
      pos = (0, 0.29)
      startVal [time (s)] = 0
      stopVal [time (s)] = 6.5
      text = Remember
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    ImageComponent Stim2_
      image [set every repeat] = $image1
      ori [set every repeat] = startOri1
      size = (300, 300)
      startVal [time (s)] = 0
      stopVal [time (s)] = 1.5
      units = pix
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    TextComponent delay_2
      letterHeight = 0.1
      startVal [time (s)] = 1.5
      stopVal [time (s)] = 6.5
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  Routine adjustOr_t1
    CodeComponent test_counter1
      Code Type = Both
      Begin Experiment:
        # Counter for the trials
        ntest = 0
        testReal = []
      Begin JS Experiment:
        ntest = 0;
        testReal = [];
      Begin JS Routine:
        ntest += 1;
        testReal = ntest;
        trials.addData("testNumber", testReal);
      Begin Routine:
        # Counter for which trial we are in right now
        ntest += 1
        testReal = ntest
        trials.addData('testNumber', testReal)
        #mainStart = core.monotonicClock.getTime()
    CodeComponent trial_counterWM_2
      Code Type = Both
      Begin Experiment:
        # Counter for the trials
        ntrial_WM = -1
        trialReal_WM = []
      Begin JS Experiment:
        ntrial_WM = -1;//to let it start with 0 in first trial
        trialReal_WM = [];
      Begin JS Routine:
        ntrial_WM += 1;
        trialReal_WM = ntrial_WM ;
        trials.addData("trialNumber_WM", trialReal_WM);
      Begin Routine:
        # Counter for which trial we are in right now
        ntrial_WM += 1
        trialReal_WM = ntrial_WM
        trials.addData('trialNumber_WM', trialReal_WM)
        #mainStart = core.monotonicClock.getTime()
    TextComponent contextStim3
      color = green
      letterHeight = 0.02
      pos = (0, 0.29)
      startVal [time (s)] = 0.0
      text = Recall
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    CodeComponent adjustCode_t1
      Code Type = Both
      Begin Experiment:
        # Counter for the bonus
        ori_list = []
      Begin JS Experiment:
        ori_list = [];
      Begin JS Routine:
        kb = new core.Keyboard({psychoJS: psychoJS, clock: new util.Clock(), waitForStart: true});

        fixedOri_t1 = startOri1;
        test1_trial = 1;
        //rotation parameters
        keySpeed = 5;
        increasePerFrame = 0;
        //set the adjusmtent stimulus
        //minimalDistance_t1 = 12.5;
        //maxOri_t1 = 347.5;
        test_ori1 = startOri3;
        test_ori2 = startOri3;

        var oriRange = [test_ori1,test_ori2];
        util.shuffle(oriRange);
        start_distance_t1 = oriRange[0];
        //currentDistance_t1 = start_distance_t1;


        this_ori_t1 = start_distance_t1;
        this_ori_arrow = 0

        trials.addData("start_distance_t1", start_distance_t1);
        trials.addData("test1_trial", test1_trial);
      Begin Routine:
        kb = keyboard.Keyboard()
        kb.clock.reset()

        #  set starting val
        #set the fixed orientation to be randomly left or right
        fixedOri = startOri1
        test1_trial = 1
        keySpeed = 1
        increasePerFrame = 0.2

        #set the adjusmtent stimulus
        minimalDistance = 12.5 # minimal distance to fixedOri
        maxOri = 347.5 # (360-12.5)
        oriRange = np.linspace(minimalDistance, maxOri, 16) #create array of possible 16 orientations
        shuffle(oriRange)
        start_distance = oriRange[0]

        if (startOri1 > start_distance) and (startOri1 < start_distance):
           this_ori = start_distance
        elif (startOri1 == start_distance):
           this_ori = start_distance + 45


        #this_ori = fixedOri+start_distance # "this_ori" determines the orientation the object is shown in at the beginning of the test. The shown rotation will at least be 12.5 degrees different from the memorized orientation (fixed orientation)
        adjustment_startOri = this_ori

        # save information
        trials.addData('adjustment_startOri', adjustment_startOri)
        trials.addData('start_distance', start_distance)
        trials.addData('fixedOri', fixedOri)
        trials.addData('minimalDistance', minimalDistance)
        trials.addData('maxOri', maxOri)
      Each Frame:
        keys = adjust_keys_t1.getKeys(waitRelease=False, clear = False)
        if len(keys)>0:
            key = keys[len(keys)-1] #get recent key press
            if not key.duration:
                keySpeed += increasePerFrame #This is like acceleration speed so you could think of making some non-linear function
                if keySpeed > 10:
                    keySpeed = 1
                if key.name == "left":
                    this_ori += keySpeed
                if key.name == "right":
                    this_ori -= keySpeed
            else: # Meaning PressedKey was released
                keySpeed = 1

        # if the grating is rotated past 360 reset to start ori
        if abs(this_ori-adjustment_startOri)>=360:
            this_ori = adjustment_startOri
        elif abs(this_ori-adjustment_startOri)<=-360:
            this_ori = adjustment_startOri
      Each JS Frame:
        keys = adjust_keys_t1.getKeys({"waitRelease": false, "clear": false});
        if ((keys.length > 0)) {
            key = keys[(keys.length - 1)];
                if ((key.name === "left")) {
                    this_ori_t1 += 14;
                }
                if ((key.name === "right")) {
                    this_ori_t1 -= 14;
             }
         }

        if ((keys.length > 0)) {
            key = keys[(keys.length - 1)];
                if ((key.name === "left")) {
                    this_ori_arrow += 14;
                }
                if ((key.name === "right")) {
                    this_ori_arrow -= 14;
             }
         }
      End JS Routine:
        trials.addData("this_ori_t1", this_ori_t1);
        //accuracy_test1 = Math.min(Math.abs((this_ori_t1 - fixedOri_t1)), Math.abs((abs((this_ori_t1 - fixedOri_t1)) - 360)));
        //trials.addData("accuracy_test1 ", accuracy_test1);
        trials.addData("trial_type", trial_type);
        //ori_list.append(accuracy_test1);
      End Routine:
        # save the final orientation state and accuracy (closeness to actual ori)
        trials.addData('this_ori', this_ori)
        accuracy = min(abs(this_ori-fixedOri), abs(abs(this_ori-fixedOri)-360))
        trials.addData('accuracy', accuracy)
        ori_list.append(accuracy)
    KeyboardComponent log_response_t1
      allowedKeys [set every repeat] = 'right','left'
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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    ImageComponent adjust_stim
      image [set every repeat] = $test1
      ori [set every frame] = this_ori_t1 
      size = (300, 300)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent arrow_2
      image = stim/keys.png
      pos = (0, 215)
      size = (1000, 563)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent adjust_keys_t1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    ImageComponent coverimage_t1
      image = stim/coverImage.png
      size = (350, 350)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.15
      units = pix
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    CodeComponent run_check_2
      Code Type = Auto->JS
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      Begin Experiment:
        corr_history= []
        hits_in_general= 0
        feedback = ' '
      End Routine:
        if log_response_t1.corr:
            corr_history = 1
            hits_in_general += 1
        else:
            corr_history = 0

        # append the last accuracy value
        thisExp.addData('corr_history', corr_history)

        thisExp.addData('hits_in_general', hits_in_general)
    CodeComponent arrow_keys
      Code Type = Auto->JS
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      Begin Experiment:
        #set size of images

        #imgChoice1="stim/keys.png"

        imgChoice1 = "stim/keys.png"
      Begin Routine:
        startTime_t1 = globalClock.getTime()
      Each Frame:
        #decrease size with left button
        #if event.getKeys(['left']):
            #imgChoice1="stim/left_arrow.png"

        #increase size with right button
        #if event.getKeys(['right']):
            #imgChoice1="stim/keys_right.png"

        keys = adjust_keys_t1.getKeys(waitRelease=False, clear = False)
        if len(keys)>0:
            key = keys[len(keys)-1] #get recent key press
            if not key.duration:
                if key.name == "left":
                    imgChoice1="stim/left_arrow.png"
                if key.name == "right":
                    imgChoice1="stim/keys_right.png"

        if globalClock.getTime() - startTime_t1 >= 3.15:
            continueRoutine = False
            imgChoice1="stim/respond_faster.png"
        #if key.name == "left":
             #imgChoice1="stim/left_arrow.png"
        #if key.name == "right":
             #imgChoice1="stim/keys_right.png"


        trials.addData('imgChoice1', imgChoice1)
  Routine adjustOr_t2
    CodeComponent test_counter2
      Code Type = Both
      Begin JS Routine:
        ntest += 1;
        testReal = ntest;
        trials.addData("testNumber", testReal);
      Begin Routine:
        # Counter for which trial we are in right now
        ntest += 1
        testReal = ntest
        trials.addData('testNumber', testReal)
        #mainStart = core.monotonicClock.getTime()
    TextComponent contextStim4
      color = green
      letterHeight = 0.02
      pos = (0, 0.29)
      startVal [time (s)] = 0.0
      text = Recall
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    CodeComponent adjustCode_t2
      Code Type = Both
      Begin Experiment:
        ori_list = []
      Begin JS Experiment:
        ori_list = [];
      Begin JS Routine:
        kb = new core.Keyboard({psychoJS: psychoJS, clock: new util.Clock(), waitForStart: true});

        fixedOri_t2 = startOri2;
        test2_trial = 1;
        //setting rotation parameters
        keySpeed = 5;
        increasePerFrame = 0;

        //set the adjusmtent stimulus
        minimalDistance_t2 = 12.5;
        maxOri_t2 = 347.5;
        test_ori3 = startOri4;
        test_ori4 = startOri4;
        var oriRange_t2 = [test_ori4,test_ori4];
        //var oriRange_t2 = [11.25, 33.75, 56.25, 78.75, 101.25, 123.75, 146.25, 168.75, 191.25, 213.75, 236.25, 258.75, 281.25, 303.75, 326.25, 348.75];
        util.shuffle(oriRange_t2);
        start_distance_t2 = oriRange_t2[0];

        this_ori_t2 = start_distance_t2;

        trials.addData("start_distance_t2", start_distance_t2);
        trials.addData("test2_trial", test2_trial);
      Begin Routine:
        kb = keyboard.Keyboard()
        #kb.clock.reset()
        #  set starting val
        #set the fixed orientation to be randomly left or right
        fixedOri = startOri2
        keySpeed = 1
        increasePerFrame = 0.2

        #set the adjusmtent stimulus
        minimalDistance = 12.5 # minimal distance to fixedOri
        maxOri = 347.5 # (360-12.5)
        oriRange = np.linspace(minimalDistance, maxOri, 16) #create array of possible 16 orientations
        shuffle(oriRange)
        start_distance = oriRange[0]
        currentDistance = start_distance
        this_ori = fixedOri+start_distance # "this_ori" determines the orientation the object is shown in at the beginning of the test. The shown rotation will at least be 12.5 degrees different from the memorized orientation (fixed orientation)
        adjustment_startOri = this_ori

        # save information
        trials.addData('adjustment_startOri', adjustment_startOri)
        trials.addData('start_distance', start_distance)
        trials.addData('fixedOri', fixedOri)
        trials.addData('minimalDistance', minimalDistance)
        trials.addData('maxOri', maxOri)
      Each Frame:
        #depending if the right or left arrow is pressed this_ori increases or decreases by 5 degrees

        #keys = event.getKeys()
        #if 'right' in keys:
             #this_ori -= 5
        #elif 'left' in keys:
             #this_ori += 5


        keys = adjust_keys_t2.getKeys(waitRelease=False, clear=False)
        if len(keys) > 0:
                key = keys[len(keys)-1] # get recent keypress
                if not key.duration:
                    print(key.duration)
                    if key.name == "left":
                            this_ori += 1
                            print(this_ori)
                    if key.name == "right":
                            this_ori -= 1
                            print(this_ori)

        # if the grating is rotated past 360 reset to start ori
        if abs(this_ori-adjustment_startOri)>=360:
            this_ori = adjustment_startOri
        elif abs(this_ori-adjustment_startOri)<=-360:
            this_ori = adjustment_startOri
      Each JS Frame:
        keys = adjust_keys_t2.getKeys({"waitRelease": false, "clear": false});
        if ((keys.length > 0)) {
            key = keys[(keys.length - 1)];
                if ((key.name === "left")) {
                    this_ori_t2 += 14;
                }
                if ((key.name === "right")) {
                    this_ori_t2 -= 14;
             }
         }


        if ((keys.length > 0)) {
            key = keys[(keys.length - 1)];
                if ((key.name === "left")) {
                    this_ori_arrow += 14;
                }
                if ((key.name === "right")) {
                    this_ori_arrow -= 14;
             }
         }
      End JS Routine:
        trials.addData("this_ori_t2", this_ori_t2);
        //accuracy_test2 = Math.min(Math.abs((this_ori_t2 - fixedOri_t2)), Math.abs((abs((this_ori_t2 - fixedOri_t2)) - 360)));
        //trials.addData("accuracy_test2", accuracy_test2);
        trials.addData("trial_type", trial_type);
        //ori_list.append(accuracy_test2);
      End Routine:
        # save the final orientation state and accuracy (closeness to actual ori)
        trials.addData('this_ori', this_ori)
        accuracy = min(abs(this_ori-fixedOri), abs(abs(this_ori-fixedOri)-360))
        trials.addData('accuracy', accuracy)
        ori_list.append(accuracy)
    KeyboardComponent log_response_t2
      allowedKeys [set every repeat] = 'right','left'
      correctAns = $CorrAns2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
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    ImageComponent adjust_stim_2
      image [set every repeat] = $test2
      ori [set every frame] = this_ori_t2
      size = (300, 300)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent arrow_3
      image = stim/keys.png
      pos = (0, 220)
      size = (1000, 563)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent adjust_keys_t2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    ImageComponent CoverImage_t2
      image = stim/coverImage.png
      size = (350, 350)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.15
      units = pix
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    CodeComponent run_check_4
      Code Type = Auto->JS
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      Begin Experiment:
        corr_history2= []
        hits_in_general2= 0
        feedback = ' '
      End Routine:
        if log_response_t2.corr:
            corr_history2 = 1
            hits_in_general2 += 1
        else:
            corr_history2 = 0

        # append the last accuracy value
        thisExp.addData('corr_history2', corr_history2)

        thisExp.addData('hits_in_general2', hits_in_general2)
    CodeComponent arrow_keys_2
      Code Type = Auto->JS
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      Begin Experiment:
        imgChoice2 = "stim/keys.png"
      Begin Routine:
        startTime_t2 = globalClock.getTime()
      Each Frame:
        #decrease size with left button
        #if event.getKeys(['left']):
            #imgChoice1="stim/left_arrow.png"

        #increase size with right button
        #if event.getKeys(['right']):
            #imgChoice1="stim/keys_right.png"

        keys = adjust_keys_t2.getKeys(waitRelease=False, clear = False)
        if len(keys)>0:
            key = keys[len(keys)-1] #get recent key press
            if not key.duration:
                if key.name == "left":
                    imgChoice2="stim/left_arrow.png"
                if key.name == "right":
                    imgChoice2="stim/keys_right.png"

        if globalClock.getTime() - startTime_t2 >= 3.15:
            continueRoutine = False
            imgChoice2="stim/respond_faster.png"

        #if key.name == "left":
             #imgChoice1="stim/left_arrow.png"
        #if key.name == "right":
             #imgChoice1="stim/keys_right.png"


        trials.addData('imgChoice2', imgChoice2)
  Routine quit_exp
    CodeComponent quitExpCode_2
      Code Type = Auto->JS
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      Begin Routine:
        core.quit()
  Routine distraction
    CodeComponent code_dis
      Code Type = Auto->JS
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      Begin Routine:
        textbox.refresh()
      Each Frame:
        response = textbox.text
      End Routine:
        thisExp.addData('typedResponse', response)
    TextboxComponent textbox
      bold = False
      color = black
      editable = True
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (None, None)
      startVal [time (s)] = 0.0
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    TextComponent dis_question
      color = black
      letterHeight = 0.03
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    KeyboardComponent dis_log
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent dis_text
      color = black
      letterHeight = 0.02
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        Please count down from 100 in steps of sevens (7) and type your answer in the textbox below.


        [You can log each answer by clicking the space bar.]
    TextComponent submit_button2_2
      color = black
      letterHeight = 0.02
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = Click space to submit your answer
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  Routine feedback_dis
    TextComponent text_14
      color = black
      letterHeight = 0.02
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $corrAns
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    CodeComponent code_4
      Code Type = Auto->JS
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      Each Frame:
        #if str(textbox.text) == corrAns:
            #ThisFeedback = 'Thanks, next one!'
        #else:
            #ThisFeedback = 'Thanks, next one!'
      End Routine:
        #trials_7.addData('correctAns',ThisFeedback)
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  Routine LTM_test
    CodeComponent code_disTiming_4
      Code Type = Auto->JS
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      Begin Experiment:
        time_out_ltm = []
      Begin Routine:
        # only on the first trial
        startTime_ltm = globalClock.getTime()
      Each Frame:
        if globalClock.getTime() - startTime_ltm >= 10.15:
            continueRoutine = False
            time_out_ltm = 1
        else:
            time_out_ltm = 0
      End Routine:
        thisExp.addData('time_out_ltm', time_out_ltm)
    CodeComponent adjustCode_LTM
      Code Type = Both
      Begin Experiment:
        ori_list = []
      Begin JS Experiment:
        ori_list = [];
      Begin JS Routine:
        kb = new core.Keyboard({psychoJS: psychoJS, clock: new util.Clock(), waitForStart: true});
        ltm_trial = trial_type;
        fixedOri_ltm = startOri_ltm;

        //rotation parameters
        keySpeed = 0.5;
        increasePerFrame = 0.25;
        //set the adjusmtent stimulus
        minimalDistance_ltm = 12.5;
        maxOri_ltm = 347.5;

        var oriRange_ltm = [11.25, 33.75, 56.25, 78.75, 101.25, 123.75, 146.25, 168.75, 191.25, 213.75, 236.25, 258.75, 281.25, 303.75, 326.25, 348.75];
        util.shuffle(oriRange_ltm);
        start_distance_ltm = oriRange_ltm[0];

        this_ori_ltm = start_distance_ltm;

        LTMtrial.addData("start_distance_ltm", start_distance_ltm);
        LTMtrial.addData("fixedOri_ltm",fixedOri_ltm);

        LTMtrial.addData("ltm_trial", ltm_trial);
      Begin Routine:
        kb = keyboard.Keyboard()
        kb.clock.reset()
        #  set starting val
        #set the fixed orientation to be randomly left or right
        fixedOri = startOri1
        keySpeed = 1
        increasePerFrame = 0.1

        #set the adjusmtent stimulus
        minimalDistance = 12.5 # minimal distance to fixedOri
        maxOri = 347.5 # (360-12.5)
        oriRange = np.linspace(minimalDistance, maxOri, 16) #create array of possible 16 orientations
        shuffle(oriRange)
        start_distance = oriRange[0]
        currentDistance = start_distance
        this_ori = fixedOri+start_distance # "this_ori" determines the orientation the object is shown in at the beginning of the test. The shown rotation will at least be 12.5 degrees different from the memorized orientation (fixed orientation)
        adjustment_startOri = this_ori

        # save information
        #trials.addData('adjustment_startOri', adjustment_startOri)
        #trials.addData('start_distance', start_distance)
        #trials.addData('fixedOri', fixedOri)
        #trials.addData('minimalDistance', minimalDistance)
        #trials.addData('maxOri', maxOri)
      Each Frame:
        keys = adjust_keys_LTM.getKeys(waitRelease=False, clear = False)
        if len(keys)>0:
            key = keys[len(keys)-1] #get recent key press
            if not key.duration:
                keySpeed += increasePerFrame #This is like acceleration speed so you could think of making some non-linear function
                if keySpeed > 10:
                    keySpeed = 1
                if key.name == "left":
                    this_ori += keySpeed
                if key.name == "right":
                    this_ori -= keySpeed
            else: # Meaning PressedKey was released
                keySpeed = 1

        # if the grating is rotated past 360 reset to start ori
        if abs(this_ori-adjustment_startOri)>=360:
            this_ori = adjustment_startOri
        elif abs(this_ori-adjustment_startOri)<=-360:
            this_ori = adjustment_startOri
      Each JS Frame:
        keys = adjust_keys_LTM.getKeys({"waitRelease": false, "clear": false});
        if ((keys.length > 0)) {
            key = keys[(keys.length - 1)];
            if ((! key.duration)) {
                keySpeed += increasePerFrame;
                if ((keySpeed > 10)) {
                    keySpeed = 0.5;
                }
                if ((key.name === "left")) {
                    this_ori_ltm += keySpeed;
                }
                if ((key.name === "right")) {
                    this_ori_ltm -= keySpeed;
                }
            } else {
                keySpeed = 0.5;
            }
        }


        if ((Math.abs((this_ori_ltm - start_distance_ltm)) >= 360)) {
            this_ori_ltm = start_distance_ltm;
        } else {
            if ((Math.abs((this_ori_ltm - start_distance_ltm)) <= (- 360))) {
            this_ori_ltm  = start_distance_ltm;
            }
        }
      End JS Routine:
        LTMtrial.addData("this_ori_ltm", this_ori_ltm);
        accuracy_ltm = Math.min(Math.abs((this_ori_ltm - fixedOri_ltm)), Math.abs((abs((this_ori_ltm - fixedOri_ltm)) - 360)));
        LTMtrial.addData("accuracy_ltm", accuracy_ltm);
        //ori_list.append(accuracy);
      End Routine:
        # save the final orientation state and accuracy (closeness to actual ori)
        #trials.addData('this_ori', this_ori)
        #accuracy = min(abs(this_ori-fixedOri), abs(abs(this_ori-fixedOri)-360))
        #trials.addData('accuracy', accuracy)
        #ori_list.append(accuracy)
    KeyboardComponent log_responseLTM
      allowedKeys [set every repeat] = 'right','left'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent contextStim_LTM
      color = green
      letterHeight = 0.02
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Recall
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    ImageComponent adjust_stim_LTM
      image [set every repeat] = $ltm_image
      ori [set every frame] = this_ori_ltm
      size = (300, 300)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent arrow_4
      image = stim/keys.png
      pos = (0, 230)
      size = (1000, 563)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent adjust_keys_LTM
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    ImageComponent CoverImage_LTM
      image = stim/coverImage.png
      size = (350, 350)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.15
      units = pix
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    TextComponent log_answer_txt
      color = black
      letterHeight = 0.02
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = [Press the space bar to log your answer]
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  Routine fixationcross2
    CodeComponent trial_counterLTM
      Code Type = Both
      Begin Experiment:
        # Counter for the trials
        ntrial = 0
        trialReal = []
      Begin JS Experiment:
        ntrial = 0;
        trialReal = [];
      Begin JS Routine:
        ntrial += 1;
        trialReal_ltm = ntrial;
        //psychoJS.experiment.addData("trialNumber_WM", trialReal);
        LTMtrial.addData("trialNumber_LTM", trialReal_ltm);
      Begin Routine:
        # Counter for which trial we are in right now
        ntrial += 1
        trialReal = ntrial
        thisExp.addData('trialNumber_LTM', trialReal)
        #mainStart = core.monotonicClock.getTime()
      Each JS Frame:
        // Change opacity of fixation cross when key is pressed
        //if ((key_resp.keys !== undefined)) {
            //crossDisappear_Main = 0;
        //}
      End Routine:
        # Use ntrial to determine attention checks after half of the trials
        if ntrial == 15:
           attentionCheck = 1
        else:
            attentionCheck = 0
    TextComponent fixationcross3
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1.5
      text [set every repeat] = +
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  Routine theEnd
    CodeComponent code_JS
      Code Type = JS
      Begin JS Experiment:
        //code_JS from crib sheet
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
      End JS Experiment:
        psychoJS.experiment.addData('globalClockTime', globalClock.getTime());
        psychoJS.experiment.nextEntry();
    MouseComponent mouse_2
      forceEndRoutineOnPress = never
      saveMouseState = never
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    TextComponent the_end
      color = black
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        Great! You finished the task. Thank you!

        In the next window, which will appear shortly, press “OK” (see image below).

        Only after pressing “OK”, you'll be directed to Prolific's website.

        Now press “space” to get there.
    KeyboardComponent the_end_exp
      allowedKeys = 'space', 'Escape'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    ImageComponent redirection_prolific
      image = stim/pic_redirection_prolific.png
      pos = (0, -0.25)
      size = (0.5, 0.3)
      startVal [time (s)] = 0.0
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  Routine trialCounter
    CodeComponent trial_counterWM
      Code Type = Both
      Begin Experiment:
        # Counter for the trials
        ntrial = 1
        trialReal = []
      Begin JS Experiment:
        ntrial = 1;
        trialReal = [];
      Begin JS Routine:
        ntrial += 1;
        trialReal = ntrial;
        trials.addData("trialNumber", trialReal);
      Begin Routine:
        # Counter for which trial we are in right now
        ntrial += 1
        trialReal = ntrial
        trials.addData('trialNumber', trialReal)
        #mainStart = core.monotonicClock.getTime()
      End JS Routine:
        if ((ntrial === 14)) {
            attentionCheck = 1;
        } else {
            attentionCheck = 0;
        }
      End Routine:
        # Use ntrial to determine attention checks after half of the trials
        if ntrial == 15:
           attentionCheck = 1
        else:
            attentionCheck = 0
  Routine bonus
    CodeComponent bonusCode
      Code Type = Auto->JS
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      Begin Experiment:
        msgBonus = 'Feedback msg to say if participant gets bonus'
        get_bonus = []
      Begin Routine:
        util.shuffle(ori_list)
        sampled_accuracies = ori_list[0]


        # Display bonus message
        if  sampled_accuracies < 91 :
            msgBonus = 'CONGRATULATIONS! The randomly picked responses were correct. You will receive the BONUS!\n\nPlease press the space button to continue to the end of the experiment.'
            get_bonus = 1
            thisExp.addData('Bonus', get_bonus)
        else:
            msgBonus = 'CONGRATULATIONS! The randomly picked responses were correct. You will receive the BONUS!\n\nPlease press the space button to continue to the end of the experiment.'
            get_bonus = 0
            thisExp.addData('Bonus', get_bonus)
    TextComponent presentBonus
      color = black
      letterHeight = 0.02
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      text [set every repeat] = $msgBonus
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    KeyboardComponent key_bonus
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine start_distraction
    TextComponent StartDistraction
      color = black
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        Well done!

        You have successfully completed the first task. We will now ask you to do some basic mental math (e.g., subtracting 7 from 100 for a short period of time).
        You are free to take a short break now before beginning the next task (max. 2 minutes).


        [Press the space bar when you’re ready to start]
    KeyboardComponent keyStart_distraction
      allowedKeys = 'left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine loop_control_ltm
    CodeComponent LoopContr
      Code Type = Both
      Begin Experiment:
        # Counter for the blocks
        thisBlock = 0


        # variable to determine conditions file
        ltm_task_blocks = (("conditions/conditions_ltm_" + str(expInfo["participant"])) + ".xlsx")
      Begin JS Experiment:
        thisBlock = 0;
        //variable to determine conditions file
        ltm_task_blocks = (("conditions/conditions_ltm_" + id.toString()) + ".xlsx");
      Begin JS Routine:
        LTMtrial.addData("ltm_task_blocks", ltm_task_blocks);
  Routine feedback_exp
    CodeComponent code_dis_2
      Code Type = Auto->JS
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      Begin Routine:
        textbox.refresh()
      Each Frame:
        feedback = textbox.text
      End Routine:
        thisExp.addData('exp_feedback', feedback)
    TextboxComponent textbox_exp_feedback
      bold = False
      borderWidth = 4
      color = black
      editable = True
      letterHeight = 0.02
      pos = (0, -0.1)
      size = (None, None)
      startVal [time (s)] = 0.0
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    KeyboardComponent exp_feedback_log
      allowedKeys = 'right','enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent dis_text_2
      color = black
      letterHeight = 0.02
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        We are almost at the end of this experiment.

        In this very last step, you can give us feedback about the task.
        Once you start typing, the text will appear in the textbox below.
    TextComponent submit_button2
      color = black
      letterHeight = 0.02
      pos = (0, -.3)
      startVal [time (s)] = 0.0
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      text:
        [When you are ready, please press “right arrow” key to go to our last message.]
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
  Routine arrow
    ImageComponent image_4
      image [set every repeat] = $imgChoice1
      pos = (0, 215)
      size = (1000, 563)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      units = pix
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    TextComponent contextStim3_4
      color = green
      letterHeight = 0.02
      pos = (0, 0.29)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.8
      text = Recall
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  Routine arrow2
    ImageComponent image_5
      image [set every repeat] = $imgChoice2
      pos = (0, 220)
      size = (1000, 563)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      units = pix
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    TextComponent contextStim3_5
      color = green
      letterHeight = 0.02
      pos = (0, 0.29)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.8
      text = Recall
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  Routine feedback_routine
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        msgEndExperiment = 'feefback text'
      Begin Routine:
        # Force end of loop if subjects fail AC
        accuracy_feedback = float(hits_in_general+hits_in_general2)/ntest
        if accuracy_feedback > 0.50:
            msgEndExperiment = 'Your accuracy is good, keep it up.\n\n\n\nThis is your accuracy:'
            numberQuits23 = 1
        else:
            msgEndExperiment = 'Your accuracy is rather low, try to answer as accurate as possible.\n\n\nThis is your accuracy:'
            numberQuits23 = 0



        giving_feedback.addData("accuracy_feedback", accuracy_feedback)
    TextComponent textEndExperiment
      color = black
      letterHeight = 0.02
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $msgEndExperiment
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    TextComponent text_13
      color = black
      letterHeight = 0.02
      pos = (-0.085, -0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text [set every repeat]:
        $str(round(accuracy_feedback, 2)*100)
    TextComponent text_15
      color = black
      letterHeight = 0.02
      pos = (0.03, -0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text =  % correctly answered
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    KeyboardComponent key_next
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine continueOrEnd
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Experiment:
        numberQuits2 = 0
        msgEndExperiment = 'text after attention checks'
      Begin Routine:
        # Force end of loop if subjects fail AC
        check_AC_acc_2 = float(hits_in_attention2)/8.0
        if check_AC_acc_2 < 0.50:
            msgEndExperiment = 'Your accuracy in the attention checks was too low. \n\n\nYou have reached the end of the experiment. \nPress the space to quit the experiment. Thank you!'
            numberQuits2 = 1
        else:
            msgEndExperiment = 'You have passed the attention checks. \n\n\nPress space to continue the experiment.'
            numberQuits2 = 0
    TextComponent textEndExperiment_2
      color = black
      letterHeight = 0.02
      startVal [time (s)] = 0.0
      text [set every repeat] = $msgEndExperiment
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    KeyboardComponent pressToEndExp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback_practice
    CodeComponent code_feedback
      Code Type = Auto->JS
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      Begin Experiment:
        msgEndExperiment_feedback = 'feedback text'
      Begin Routine:
        # Force end of loop if subjects fail AC
        practice_feedback = hits_in_general3
        if practice_feedback == 1:
            numberQuits23 = 1
        else:
            numberQuits23 = 0
    TextComponent feedback_practice_txt
      color = black
      letterHeight = 0.02
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $msgEndExperiment_feedback
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
  Routine startLTM
    TextComponent text_10
      color = black
      letterHeight = 0.02
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        Well done! You have now completed most of the task. But there is still one important part to come.

        In this experiment’s last part, we will show you each object once again, in random rotations. We ask you to adjust the orientation of each object once more to match the orientation it had when we showed it to you for the very first time.

        Importantly, now you can use the right and left arrow keys to continously adjust the object to the orientation you remembered before. This means you can not just press once, but hold the keys or press a couple of times to continously rotate the object until it precisely matches the orientation you rememberd before.

        Go ahead and try to move the Eiffel Tower to get a better idea of what we mean :-).

        You can now give your answer by first rotating each object with the left and right arrow keys, and then hitting the space bar to submit your repsonse.


        We understand it might sometimes be hard to remember the exact orientation of each object. Just try the best you can!

        [Press the space bar when you’re ready to start]
    KeyboardComponent log_response_instru_2
      allowedKeys [set every repeat] = 'right','left'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent adjust_practice_2
      Code Type = Both
      Begin Experiment:
        orientation = 0
      Begin JS Experiment:
        orientation = 0;
      Begin JS Routine:
        orientation = 0;
        keySpeed = 1;
        increasePerFrame = 0.1;
      Begin Routine:
        #adjust_stim_8.setAutoDraw(False)
        #kb = keyboard.Keyboard()

        orientation = 0
        keySpeed = 1
        increasePerFrame = 0.1

        #set the adjusmtent stimulus
      Each Frame:
        keys = adjust_keys_intru_2.getKeys(waitRelease=False, clear = False)
        if len(keys)>0:
            key = keys[len(keys)-1] #get recent key press
            if not key.duration:
                keySpeed += increasePerFrame #This is like acceleration speed so you could think of making some non-linear function
                if keySpeed > 10:
                    keySpeed = 1
                if key.name == "left":
                    orientation += keySpeed
                if key.name == "right":
                    orientation -= keySpeed
            else: # Meaning PressedKey was released
                keySpeed = 1
      Each JS Frame:
        keys = adjust_keys_intru_2.getKeys({"waitRelease": false, "clear": false});
        if ((keys.length > 0)) {
            key = keys[(keys.length - 1)];
            if ((! key.duration)) {
                keySpeed += increasePerFrame;
                if ((keySpeed > 10)) {
                    keySpeed = 0.5;
                }
                if ((key.name === "left")) {
                    orientation += keySpeed;
                }
                if ((key.name === "right")) {
                    orientation -= keySpeed;
                }
            } else {
                keySpeed = 0.5;
            }
        }
    ImageComponent adjust_stim_instru_2
      image = stim/eiffeltower.png
      ori [set every frame] = orientation
      pos = (0,-180)
      size = (300, 300)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent arrow_5
      image = stim/keys.png
      pos = (0, -50)
      size = (1000, 563)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent adjust_keys_intru_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine time_out_routine_3
    TextComponent respond_faster_3
      color = red
      letterHeight = 0.02
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Respond faster!
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  Routine delay_3
    TextComponent contextStim5
      color = green
      letterHeight = 0.02
      pos = (0, 0.29)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2
      text = Recall
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  Routine new_trial
    TextComponent short_pause
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1.5
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    PolygonComponent polygon_2
      fillColor = grey
      lineColor = grey
      shape = cross
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1.5
      units = pix
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    TextComponent contextStim3_6
      color = red
      letterHeight = 0.02
      pos = (0, 0.29)
      startVal [time (s)] = 1
      stopVal [time (s)] = 1.5
      text = Remember
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Flow
  Routine Start
  LoopInitiator instrLoop loopType="TrialHandler"
    loopType = sequential
    nReps = 100
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    Routine instructions
  LoopTerminator instrLoop
  LoopInitiator practice_trial_ori loopType="TrialHandler"
    conditionsFile = conditions/correct_adjustment.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'CorrAnsOri': 'right', 'practice_ori': 185, 'practice_ori_test': 200},
      {'CorrAnsOri': 'left', 'practice_ori': 280, 'practice_ori_test': 255},
      {'CorrAnsOri': 'left', 'practice_ori': 170, 'practice_ori_test': 155},
      {'CorrAnsOri': 'right', 'practice_ori': 120, 'practice_ori_test': 135},
      {'CorrAnsOri': 'right', 'practice_ori': 170, 'practice_ori_test': 185},
      {'CorrAnsOri': 'left', 'practice_ori': 75, 'practice_ori_test': 55}]
    Routine adjustOr_instru
    Routine feedback_practice
  LoopTerminator practice_trial_ori
  Routine start_practice
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 4
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    Routine loop_control
    LoopInitiator trials_6 loopType="TrialHandler"
      Selected rows = $MyIndicesMain
      conditionsFile = $main_task_blocks
      loopType = sequential
      nReps = 1
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      Routine trialCounter
      LoopInitiator trials_5 loopType="TrialHandler"
        loopType = random
        nReps = baselinePresent2
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        Routine trial_type2_3
      LoopTerminator trials_5
      LoopInitiator trials_4 loopType="TrialHandler"
        loopType = random
        nReps = baselinePresent
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        Routine trial_baseline
      LoopTerminator trials_4
      Routine adjustOr_t1
      Routine arrow
      LoopInitiator skip_trial loopType="TrialHandler"
        loopType = random
        nReps = adjust2Present
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        Routine delay_3
        Routine adjustOr_t2
        Routine arrow2
      LoopTerminator skip_trial
      Routine new_trial
    LoopTerminator trials_6
    LoopInitiator giving_feedback loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine feedback_routine
    LoopTerminator giving_feedback
    LoopInitiator start_testing loopType="TrialHandler"
      loopType = random
      nReps = testing_start
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      Routine testing
    LoopTerminator start_testing
    LoopInitiator break_trial loopType="TrialHandler"
      loopType = random
      nReps = break_routine
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      Routine break_2
    LoopTerminator break_trial
    LoopInitiator AttentionExp loopType="TrialHandler"
      Selected rows = 1:7
      conditionsFile = conditions/attentionChecks.xlsx
      loopType = sequential
      nReps = repsAC
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      conditions:
        [{'Stim': 1, 'Loc1': 'one ↑', 'Loc2': 'three →', 'Loc3': 'four ↓', 'Loc4': '← two', 'CorrAns': 'up'},
        {'Stim': 3, 'Loc1': 'two ↑', 'Loc2': 'one →', 'Loc3': 'three ↓', 'Loc4': '← four', 'CorrAns': 'down'},
        {'Stim': 2, 'Loc1': 'three ↑', 'Loc2': 'four →', 'Loc3': 'one ↓', 'Loc4': '← two', 'CorrAns': 'left'},
        {'Stim': 4, 'Loc1': 'two↑', 'Loc2': 'three →', 'Loc3': 'four ↓', 'Loc4': '← one', 'CorrAns': 'down'},
        {'Stim': 1, 'Loc1': 'four ↑', 'Loc2': 'one →', 'Loc3': 'two ↓', 'Loc4': '← three', 'CorrAns': 'right'},
        {'Stim': 3, 'Loc1': 'two ↑', 'Loc2': 'three →', 'Loc3': 'one ↓', 'Loc4': '← four', 'CorrAns': 'right'},
        {'Stim': 2, 'Loc1': 'two ↑', 'Loc2': 'four →', 'Loc3': 'three ↓', 'Loc4': '← one', 'CorrAns': 'up'},
        {'Stim': 4, 'Loc1': 'one ↑', 'Loc2': 'four →', 'Loc3': 'two ↓', 'Loc4': '← three', 'CorrAns': 'right'}]
      Routine attentionCheck
    LoopTerminator AttentionExp
    LoopInitiator trials_3 loopType="TrialHandler"
      loopType = random
      nReps = numberACresults
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      Routine continueOrEnd
    LoopTerminator trials_3
    LoopInitiator quitExp loopType="TrialHandler"
      loopType = random
      nReps = numberQuits2
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      Routine quit_exp
    LoopTerminator quitExp
  LoopTerminator trials
  Routine start_distraction
  LoopInitiator disTrials loopType="TrialHandler"
    conditionsFile = conditions/distractorTask.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'corrAns': 'no', 'question': 'Please count down from one hundred by sevens and type your answer to the textbox below. \n\n100 - 7 = …?\n\nYou can log your answer by clicking the space bar.'},
      {'corrAns': 'yes', 'question': '93-7 = …?'},
      {'corrAns': 'yes', 'question': '86-7 = …?'},
      {'corrAns': 'yes', 'question': '79-7 = …?'},
      {'corrAns': 'no', 'question': '72-7 = …?'},
      {'corrAns': 'yes', 'question': '72-7 = …?'},
      {'corrAns': 'no', 'question': '65-7 = …?'},
      {'corrAns': 'no', 'question': '65-7 = …?'},
      {'corrAns': 'no', 'question': '65-7 = …?'},
      {'corrAns': 'yes', 'question': '65-7 = …?'},
      {'corrAns': 'yes', 'question': '58-7 = …?'},
      {'corrAns': 'no', 'question': '51-7 = …?'},
      {'corrAns': 'no', 'question': '51-7 = …?'},
      {'corrAns': 'no', 'question': '51-7 = …?'},
      {'corrAns': 'yes', 'question': '51-7 = …?'}]
    Routine time
    Routine distraction
    Routine feedback_dis
  LoopTerminator disTrials
  Routine startLTM
  LoopInitiator LTMtrial loopType="TrialHandler"
    conditionsFile = $ltm_task_blocks
    loopType = random
    nReps = 1
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    Routine loop_control_ltm
    Routine fixationcross2
    Routine LTM_test
    LoopInitiator time_limit_ltm loopType="TrialHandler"
      loopType = random
      nReps = time_out_ltm
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      Routine time_out_routine_3
    LoopTerminator time_limit_ltm
  LoopTerminator LTMtrial
  LoopInitiator BonusLoop loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine bonus
  LoopTerminator BonusLoop
  Routine feedback_exp
  Routine theEnd
